<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisplayDevice" />
        <Property Name="TargetRenderFrequency" />
        <Property Name="Width" />
        <Property Name="Height" />
        <Property Name="Location" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1080</gl:Width>
          <gl:Height>1080</gl:Height>
          <gl:VSync>Off</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>White</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Hidden</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency>200</gl:TargetUpdateFrequency>
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>house</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>..\resources\house.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>1d-01</gl:Name>
              <gl:Width>1024</gl:Width>
              <gl:Height>1024</gl:Height>
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>..\resources\1d-01.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>10d-01</gl:Name>
              <gl:Width>1024</gl:Width>
              <gl:Height>1024</gl:Height>
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>..\resources\10d-01.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>End</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <ExtentX>0.5</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <NumberColumns>5</NumberColumns>
        <NumberRows>10</NumberRows>
        <Phase>0</Phase>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>