<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.uEye;assembly=Bonsai.uEye"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:pal="clr-namespace:Bonsai.PulsePal;assembly=Bonsai.PulsePal"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:uEyeCapture">
          <p1:DeviceId>1</p1:DeviceId>
          <p1:ConfigFile>C:\Users\ALBINO\Desktop\HighResCamParams.ini</p1:ConfigFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HighResCamera</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PulsePal</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="PulsePal Port" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="pal:CreatePulsePal">
                <pal:DeviceName>PulsePal</pal:DeviceName>
                <pal:PortName>COM6</pal:PortName>
                <pal:OutputChannels />
                <pal:TriggerChannels />
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>IsOpen</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>End</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PulsepalInitiated</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>positionX</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>positionY</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Down</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>positionX</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Up</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>-0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>-10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>positionX</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Voltage" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pal:SetFixedVoltage">
          <pal:DeviceName>PulsePal</pal:DeviceName>
          <pal:Channel>2</pal:Channel>
          <pal:Voltage>1.1000000238418579</pal:Voltage>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Right</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>positionY</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Left</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>-0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>-10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>positionY</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Voltage" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pal:SetFixedVoltage">
          <pal:DeviceName>PulsePal</pal:DeviceName>
          <pal:Channel>1</pal:Channel>
          <pal:Voltage>6.6999959945678711</pal:Voltage>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="23" Label="Source1" />
      <Edge From="8" To="38" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="11" To="17" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="20" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="26" To="32" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="35" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>