WorkflowBuilder(Version=2.9.0)
GroupWorkflow Initiation
    Disable ExternalizedMapping(LowResCam, LowResConfig, HighResCam, HighResConfig)
    -> GroupWorkflow Cameras
        Disable Bonsai.Vision.FileCapture
          FileName="C:\Users\ALBINO\Desktop\Portable Bonsai\resources\FemaleConcave_CamH_2.avi"
          PlaybackRate=0
          StartPosition=0
          PositionUnits=Frames
          Loop=false
          Playing=true
        -> Disable PublishSubject HighResCamera

        Disable Bonsai.Vision.FileCapture
          FileName="C:\Users\ALBINO\Desktop\Portable Bonsai\resources\FemaleConcave_CamL_2.avi"
          PlaybackRate=0
          StartPosition=0
          PositionUnits=Frames
          Loop=false
          Playing=true
        -> Disable PublishSubject LowResCamera

        ExternalizedMapping(DeviceId(DisplayName=HighResCam), ConfigFile(DisplayName=HighResConfig))
        -> Bonsai.uEye.uEyeCapture(DeviceId=1, ConfigFile=C:\Users\ALBINO\Desktop\HighResCamParams.ini)
        -> MemberSelector(Selector=Image)
        -> PublishSubject HighResCamera

        ExternalizedMapping(DeviceId(DisplayName=LowResCam), ConfigFile(DisplayName=LowResConfig))
        -> Bonsai.uEye.uEyeCapture(DeviceId=2, ConfigFile=C:\Users\ALBINO\Desktop\LowResCamParams.ini)
        -> MemberSelector(Selector=Image)
        -> PublishSubject LowResCamera

    ExternalizedMapping(DisplayDevice, TargetRenderFrequency, Width, Height)
    -> GroupWorkflow "Projector Window"
        ExternalizedMapping(DisplayDevice, TargetRenderFrequency, Width, Height, Location)
        -> Bonsai.Shaders.CreateWindow => #1
          Width=1080
          Height=1080
          VSync=Off
          SwapSync=false
          ClearColor=White
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Hidden
          WindowState=Normal
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=200
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.TextureResources
          Textures
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=house
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=..\resources\house.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=1d-01
              Width=1024
              Height=1024
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=..\resources\1d-01.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=10d-01
              Width=1024
              Height=1024
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=..\resources\10d-01.png
              ColorType=Unchanged
              FlipMode=Vertical
        -> Bonsai.Resources.LoadResources
        #1 -> Disable MemberSelector(Selector=Height)
        -> Disable PublishSubject ScreenHeight
        #1 -> Disable MemberSelector(Selector=Width)
        -> Disable PublishSubject ScreenWidth

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1)
        -> PublishSubject Draw

    ExternalizedMapping("PulsePal Port")
    -> GroupWorkflow PulsePal
        ExternalizedMapping(PortName(DisplayName="PulsePal Port"))
        -> Bonsai.PulsePal.CreatePulsePal(DeviceName=PulsePal, PortName=COM6, OutputChannels="", TriggerChannels="")
        -> MemberSelector(Selector=IsOpen)
        -> PublishSubject PulsepalInitiated

    ExternalizedMapping(PX2MM, MM2VL, MM2VR)
    -> GroupWorkflow "Coordinate Transformation"
        ExternalizedMapping(FileName(DisplayName=PX2MM))
        -> Bonsai.IO.CsvReader(FileName=C:\Users\ALBINO\Desktop\VRConversions\PX2MM.txt, ListSeparator="", ScanPattern="%f,%f,%f", SkipRows=0)
        -> SelectMany ForEachLine
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            #0 -> MemberSelector(Selector=Item2) => #2
            #0 -> MemberSelector(Selector=Item3) => #3
            #1, #2, #3 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> ToArray
        -> Take(Count=1)
        -> AsyncSubject PX2MM

        ExternalizedMapping(FileName(DisplayName=MM2VL))
        -> Bonsai.IO.CsvReader(FileName=C:\Users\ALBINO\Desktop\VRConversions\MM2VL.txt, ListSeparator="", ScanPattern="%f,%f,%f", SkipRows=0)
        -> SelectMany ForEachLine
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            #0 -> MemberSelector(Selector=Item2) => #2
            #0 -> MemberSelector(Selector=Item3) => #3
            #1, #2, #3 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> ToArray
        -> Take(Count=1)
        -> AsyncSubject MM2VL

        ExternalizedMapping(FileName(DisplayName=MM2VR))
        -> Bonsai.IO.CsvReader(FileName=C:\Users\ALBINO\Desktop\VRConversions\MM2VR.txt, ListSeparator="", ScanPattern="%f,%f,%f", SkipRows=0)
        -> SelectMany ForEachLine
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            #0 -> MemberSelector(Selector=Item2) => #2
            #0 -> MemberSelector(Selector=Item3) => #3
            #1, #2, #3 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> ToArray
        -> Take(Count=1)
        -> AsyncSubject MM2VR

    GroupWorkflow GlobalTimer
        SubscribeSubject LowResCamera => #0
        -> Take(Count=1) => #1
        SubscribeSubject HighResCamera
        -> Take(Count=1) => #3
        #1, #3 -> Zip => #4
        #0, #4 -> SubscribeWhen
        -> TimeInterval
        -> MemberSelector(Selector=Interval.TotalSeconds)
        -> Accumulate
        -> PublishSubject ElapsedTime
        SubscribeSubject HighResCamera => #10
        #10, #3 -> SubscribeWhen
        -> PublishSubject HighResTimer

    ExternalizedMapping("Photodiode Port")
    -> GroupWorkflow Photodiode
        ExternalizedMapping(PortName(DisplayName="Photodiode Port"))
        -> Bonsai.IO.Ports.CreateSerialPort
          Name=Photodiode
          PortName=COM4
          BaudRate=115200
          NewLine=\r\n
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=false
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        SubscribeSubject HighResTimer
        -> StringProperty(Value=REQ)
        -> Bonsai.IO.Ports.SerialWriteLine(PortName=Photodiode, NewLine=\r\n)

        Bonsai.IO.Ports.SerialReadLine(PortName=Photodiode, NewLine=\r\n)
        -> Condition
            WorkflowInput Source1
            -> NotEqual(Operand=StringProperty(Value=E))
            -> WorkflowOutput
        -> Parse(Pattern=%i)
        -> PublishSubject PhotoValue

GroupWorkflow Tracking
    GroupWorkflow "Pulsepal Control"
        SubscribeSubject HighResTimer => #0
        SubscribeSubject TrackResult
        -> Bonsai.Scripting.IronPython.PythonTransform SelectFly => #2
          Script:
            import clr
            import math
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f

            @returns(Point2f)
            def process(value):
                fly_centroid = value.FlyCentroid
                fly2_centroid = value.Fly2Centroid

                # Check if the point is missing or contains NaN values
                if (fly_centroid is None or
                    math.isnan(fly_centroid.X) or
                    math.isnan(fly_centroid.Y)):

                    # Output the fallback centroid
                    return fly2_centroid

                # Otherwise, output the primary centroid
                return fly_centroid
        SubscribeSubject MM2VL => #3
        #2, #3 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #4
        -> MemberSelector(Selector=X)
        -> PropertyMapping(Value)
        -> DoubleProperty(Value=-3.2451381683349609)
        -> IncludeWorkflow(Path=Extensions\Clamp.bonsai, MaxValue=10, MinValue=-10)
        -> PropertyMapping(Voltage) => #9
        #0, #9 -> Bonsai.PulsePal.SetFixedVoltage(DeviceName=PulsePal, Channel=2, Voltage=-3.2451381683349609)
        #4 -> MemberSelector(Selector=Y)
        -> PropertyMapping(Value)
        -> DoubleProperty(Value=5.53464937210083)
        -> IncludeWorkflow(Path=Extensions\Clamp.bonsai, MaxValue=10, MinValue=-10)
        -> PropertyMapping(Voltage) => #15
        #15, #0 -> Bonsai.PulsePal.SetFixedVoltage(DeviceName=PulsePal, Channel=1, Voltage=5.53464937210083)

    SubscribeSubject LowResCamera
    -> GroupWorkflow ProcessLowResInfo => #2
        WorkflowInput Source1 => #0
        -> Timestamp => #1
        #0 -> IntProperty(Value=1)
        -> Accumulate => #3
        SubscribeSubject HighResCamera => #4
        -> Timestamp => #5
        #4 -> IntProperty(Value=1)
        -> Accumulate => #7
        #5, #7 -> Zip => #8
        #0, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #10
        SubscribeSubject ElapsedTime => #11
        #0, #11 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #13
        #1, #3, #10, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1.Value as LowResFrame,
            it.Item1.Timestamp as LowResTimestamp,
            it.Item2 as LowResFrameNumber,
            it.Item3.Item1 as HighResTimestamp,
            it.Item3.Item2 as HighResFrameNumber,
            it.Item4 as ExperimentalTime)
        -> WorkflowOutput
    -> MemberSelector(Selector=LowResFrame) => #3
    ExternalizedMapping(ThresholdValue, MinArea, MaxArea) => #4
    #3, #4 -> GroupWorkflow ExtractBinaryRegions(Description="Extracts the Centroid and Region Extremes of the Two Biggest Binary Regions")
        WorkflowInput Source1
        -> Bonsai.Vision.Grayscale => #1
        ExternalizedMapping(ThresholdValue) => #2
        #1, #2 -> Bonsai.Vision.Threshold(ThresholdValue=100, MaxValue=255, ThresholdType=BinaryInv) => #3
        ExternalizedMapping(MinArea, MaxArea) => #4
        #3, #4 -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=1, MaxArea=2000)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> SelectMany 2LargestBinaryRegions
            WorkflowInput Source1
            -> Bonsai.Vision.SortBinaryRegions
            -> Bonsai.Vision.TakeBinaryRegions(Count=2)
            -> Concat => #3
            -> Bonsai.Vision.Centroid => #4
            #3 -> Bonsai.Vision.BinaryRegionExtremes(Method=MajorAxis) => #5
            #4, #5 -> Zip
            -> ToArray
            -> Bonsai.Scripting.IronPython.PythonTransform CheckMissTracking => #8
              Script:
                import clr
                clr.AddReference("OpenCV.Net")
                from OpenCV.Net import *
                from System import Tuple

                nanpoint = Point2f(float.NaN,float.NaN)

                @returns(Tuple[Tuple[Point2f,Point2f,Point2f],Tuple[Point2f,Point2f,Point2f]])
                def process(value):

                  if len(value) == 0:
                    return Tuple.Create(Tuple.Create(nanpoint,nanpoint,nanpoint),
                                        Tuple.Create(nanpoint,nanpoint,nanpoint))
                  elif len(value) == 1:
                    return Tuple.Create(Tuple.Create(value[0].Item1,value[0].Item2.Item1,value[0].Item2.Item2),
                                        Tuple.Create(nanpoint,nanpoint,nanpoint))
                  else:
                    return Tuple.Create(Tuple.Create(value[0].Item1,value[0].Item2.Item1,value[0].Item2.Item2),
                                        Tuple.Create(value[1].Item1,value[1].Item2.Item1,value[1].Item2.Item2))
            -> MemberSelector(Selector=Item1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var" => #10
              Expression:
                New(
                it.Item1 as Centroid,
                it.Item2 as MajorAxisExtreme1,
                it.Item3 as MajorAxisExtreme2)
            #8 -> MemberSelector(Selector=Item2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var" => #12
              Expression:
                New(
                it.Item1 as Centroid,
                it.Item2 as MajorAxisExtreme1,
                it.Item3 as MajorAxisExtreme2)
            #10, #12 -> Zip
            -> WorkflowOutput
        -> WorkflowOutput
    -> GroupWorkflow DetectFly => #6
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform DetectFemale => #1
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            # Global Variables
            smallPos = Point2f(float(0),float(0))
            bigPos = Point2f(float(0),float(0))
            smallHis = float(0)
            bigHis = float(0)
            check = float(25)

            def distancesquare(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return dx * dx + dy * dy

            @returns(Tuple[Tuple[Point2f,Tuple[Point2f,Point2f]],Tuple[Point2f,Tuple[Point2f,Point2f]]])
            def process(value):
              #Load Global Variables
              global smallPos, bigPos, smallHis, bigHis, check

              bigFly = value.Item1.Centroid
              bigPt1 = value.Item1.MajorAxisExtreme1
              bigPt2 = value.Item1.MajorAxisExtreme2
              smallFly = value.Item2.Centroid
              smallPt1 = value.Item2.MajorAxisExtreme1
              smallPt2 = value.Item2.MajorAxisExtreme2

              if distancesquare(bigFly,bigPos) > distancesquare(smallFly,bigPos):
                auxFly = bigFly
                auxPt1 = bigPt1
                auxPt2 = bigPt2
                bigFly = smallFly
                bigPt1 = smallPt1
                bigPt2 = smallPt2
                smallFly = auxFly
                smallPt1 = auxPt1
                smallPt2 = auxPt2

              bigLength = distancesquare(bigPt1,bigPt2)
              smallLength = distancesquare(smallPt1,smallPt2)
              if bigHis == 0:
                bigHis = bigLength
              if smallHis == 0:
                smallHis = smallLength
              dnow = distancesquare(Point2f(bigHis,smallHis),Point2f(bigLength,smallLength))
              dflip = distancesquare(Point2f(smallHis,bigHis),Point2f(bigLength,smallLength))
              if dnow > dflip:
                check = check + 1
              if check == 25:
                auxFly = bigFly
                auxPt1 = bigPt1
                auxPt2 = bigPt2
                bigFly = smallFly
                bigPt1 = smallPt1
                bigPt2 = smallPt2
                smallFly = auxFly
                smallPt1 = auxPt1
                smallPt2 = auxPt2
                bigLength = distancesquare(bigPt1,bigPt2)
                smallLength = distancesquare(smallPt1,smallPt2)
                check = 0
              bigHis = bigHis * 0.95 + bigLength * 0.05
              smallHis = smallHis * 0.95 + smallLength * 0.05

              bigPos = bigFly
              smallPos = smallFly

              return Tuple.Create(Tuple.Create(smallPos,Tuple.Create(smallPt1,smallPt2)),
                                    Tuple.Create(bigFly,Tuple.Create(bigPt1,bigPt2)))
        -> MemberSelector(Selector=Item1.Item1) => #2
        #1 -> MemberSelector(Selector=Item1.Item2)
        -> Bonsai.Scripting.IronPython.PythonTransform FindHead => #4
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            # Global Variables
            velocity = None
            head = None
            tail = None
            counter = None
            history = None


            def distancesquare(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return dx * dx + dy * dy

            def angleline(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return math.atan2(dy, dx)

            def cossimilarity(pt1,pt2):
              if (dotproduct(pt1,pt1)*dotproduct(pt2,pt2)) == 0:
                return float(1)
              else:
                return float(dotproduct(pt1,pt2)/(math.sqrt(dotproduct(pt1,pt1))*math.sqrt(dotproduct(pt2,pt2))))

            def dotproduct(pt1,pt2):
              return pt1.X*pt2.X+pt1.Y*pt2.Y

            @returns(Tuple[Point2f])
            def process(value):
                #Load Global Variables
                global velocity, head, tail, counter, history

                pt1 = value.Item1
                pt2 = value.Item2

                if math.isnan(pt1.X):
                  return Tuple.Create(Point2f(float.NaN,float.NaN))
                else:
                  if head is None:
                    head = pt1
                    tail = pt2
                    return Tuple.Create(Point2f(float.NaN,float.NaN))
                  else:
                    # If only one point has been seen
                    if velocity is None:
                      if distancesquare(pt1, head) < distancesquare(pt1, tail):
                        head = pt1
                        tail = pt2
                      else:
                        head = pt2
                        tail = pt1
                      velocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      history = float(0)
                      counter = float(0)
                    # If more then one point has been seen
                    else:
                      bodyOri = Point2f(pt1.X-pt2.X,pt1.Y-pt2.Y)
                      if cossimilarity(bodyOri,velocity) < 0:
                        aux = pt1
                        pt1 = pt2
                        pt2 = aux
                      instantaneousVelocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      distance = math.sqrt(distancesquare(pt1,head))
                      if counter < 8:
                        counter += 1
                      if distance > 0 and abs(cossimilarity(instantaneousVelocity,velocity)) > 0.2:
                        history = (history*(counter-1)/counter)+cossimilarity(instantaneousVelocity,velocity)/counter
                        velocity = Point2f(((velocity.X*(counter-1))/counter)+(instantaneousVelocity.X/counter),((velocity.Y*(counter-1))/counter)+(instantaneousVelocity.Y/counter))
                      if history < 0:
                        counter = float(0)
                        history = float(0)
                        head = pt2
                        tail = pt1
                        velocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      else:
                        head = pt1
                        tail = pt2
                      #velocity = instantaneousVelocity
                    # Flip Y Axis for cartesian referential normalization
                    return Tuple.Create(head)
        #2, #4 -> Zip => #5
        #1 -> MemberSelector(Selector=Item2.Item1) => #6
        #1 -> MemberSelector(Selector=Item2.Item2)
        -> Bonsai.Scripting.IronPython.PythonTransform FindHead => #8
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            # Global Variables
            velocity = None
            head = None
            tail = None
            counter = None
            history = None


            def distancesquare(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return dx * dx + dy * dy

            def angleline(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return math.atan2(dy, dx)

            def cossimilarity(pt1,pt2):
              if (dotproduct(pt1,pt1)*dotproduct(pt2,pt2)) == 0:
                return float(1)
              else:
                return float(dotproduct(pt1,pt2)/(math.sqrt(dotproduct(pt1,pt1))*math.sqrt(dotproduct(pt2,pt2))))

            def dotproduct(pt1,pt2):
              return pt1.X*pt2.X+pt1.Y*pt2.Y

            @returns(Tuple[Point2f])
            def process(value):
                #Load Global Variables
                global velocity, head, tail, counter, history

                pt1 = value.Item1
                pt2 = value.Item2

                if math.isnan(pt1.X):
                  return Tuple.Create(Point2f(float.NaN,float.NaN))
                else:
                  if head is None:
                    head = pt1
                    tail = pt2
                    return Tuple.Create(Point2f(float.NaN,float.NaN))
                  else:
                    # If only one point has been seen
                    if velocity is None:
                      if distancesquare(pt1, head) < distancesquare(pt1, tail):
                        head = pt1
                        tail = pt2
                      else:
                        head = pt2
                        tail = pt1
                      velocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      history = float(0)
                      counter = float(0)
                    # If more then one point has been seen
                    else:
                      bodyOri = Point2f(pt1.X-pt2.X,pt1.Y-pt2.Y)
                      if cossimilarity(bodyOri,velocity) < 0:
                        aux = pt1
                        pt1 = pt2
                        pt2 = aux
                      instantaneousVelocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      distance = math.sqrt(distancesquare(pt1,head))
                      if counter < 8:
                        counter += 1
                      if distance > 0 and abs(cossimilarity(instantaneousVelocity,velocity)) > 0.2:
                        history = (history*(counter-1)/counter)+cossimilarity(instantaneousVelocity,velocity)/counter
                        velocity = Point2f(((velocity.X*(counter-1))/counter)+(instantaneousVelocity.X/counter),((velocity.Y*(counter-1))/counter)+(instantaneousVelocity.Y/counter))
                      if history < 0:
                        counter = float(0)
                        history = float(0)
                        head = pt2
                        tail = pt1
                        velocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      else:
                        head = pt1
                        tail = pt2
                      #velocity = instantaneousVelocity
                    # Flip Y Axis for cartesian referential normalization
                    return Tuple.Create(head)
        #6, #8 -> Zip => #9
        #5, #9 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1.Item1 as FlyCentroid,
            it.Item1.Item2.Item1 as FlyHead,
            it.Item2.Item1 as Fly2Centroid,
            it.Item2.Item2.Item1 as Fly2Head)
        -> WorkflowOutput
    #3, #6 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform Visualizer
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import IplImage, Point, Scalar, CV, ColorConversion

        def is_valid(pt):
            # Keeping the hasattr checks for X and Y to be extra safe
            return (
                pt is not None and
                hasattr(pt, 'X') and
                hasattr(pt, 'Y') and
                not math.isnan(pt.X) and
                not math.isnan(pt.Y)
            )

        @returns(IplImage)
        def process(value):
            # 1. Maintain your exact input structure
            image, points = value

            # 2. Convert grayscale (1 channel) to color (3 channels) if necessary
            if image.Channels == 1:
                color_image = IplImage(image.Size, image.Depth, 3)
                CV.CvtColor(image, color_image, ColorConversion.Gray2Bgr)
                image = color_image

            # 3. Safely extract named properties using getattr()
            # If the property doesn't exist on the 'points' object, it defaults to None
            p1 = getattr(points, 'FlyCentroid', None)
            p2 = getattr(points, 'FlyHead', None)
            p3 = getattr(points, 'Fly2Centroid', None)
            p4 = getattr(points, 'Fly2Head', None)

            # 4. Draw each separately
            if is_valid(p1):
                CV.Circle(image, Point(int(p1.X), int(p1.Y)), 1, Scalar(255, 0, 0), -1)

            if is_valid(p2):
                CV.Circle(image, Point(int(p2.X), int(p2.Y)), 1, Scalar(0, 255, 0), -1)

            if is_valid(p3):
                CV.Circle(image, Point(int(p3.X), int(p3.Y)), 1, Scalar(0, 0, 255), -1)

            if is_valid(p4):
                CV.Circle(image, Point(int(p4.X), int(p4.Y)), 1, Scalar(0, 255, 255), -1)

            return image
    -> WorkflowOutput
    #6 -> MemberSelector(Selector=FlyCentroid) => #10
    SubscribeSubject PX2MM => #11
    #10, #11 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #12
    #6 -> MemberSelector(Selector=FlyHead) => #13
    #13, #11 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #14
    #12, #14 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform CalculateOrientation
      Script:
        import math
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import Point2f
        from System import Single, Tuple

        def angleline(pt1,pt2):
          dx = (pt2.X - pt1.X)
          dy = (pt2.Y - pt1.Y)
          return math.atan2(dy, dx)

        @returns(float)
        def process(value):
            centroid = value.Item1
            head = value.Item2
            orientation = angleline(centroid,head)
            return float(orientation)
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var" => #17
      Expression:
        New(
        it as FlyOrientation)
    #6 -> MemberSelector(Selector=Fly2Centroid) => #18
    #18, #11 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #19
    #6 -> MemberSelector(Selector=Fly2Head) => #20
    #20, #11 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #21
    #19, #21 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform CalculateOrientation
      Script:
        import math
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import Point2f
        from System import Single, Tuple

        def angleline(pt1,pt2):
          dx = (pt2.X - pt1.X)
          dy = (pt2.Y - pt1.Y)
          return math.atan2(dy, dx)

        @returns(float)
        def process(value):
            centroid = value.Item1
            head = value.Item2
            orientation = angleline(centroid,head)
            return float(orientation)
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var" => #24
      Expression:
        New(
        it as Fly2Orientation)
    #2, #12, #14, #17, #19, #21, #24 -> Zip
    -> Timestamp
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
      Expression:
        New(
        it.Value.Item1.LowResFrameNumber as LowResFrame,
        it.Value.Item1.HighResFrameNumber as HighResFrame,
        it.Value.Item2 as FlyCentroid,
        it.Value.Item3 as FlyHead,
        it.Value.Item4 as FlyOrientation,
        it.Value.Item5 as Fly2Centroid,
        it.Value.Item6 as Fly2Head,
        it.Value.Item7 as Fly2Orientation,
        it.Timestamp as TimestampTracking,
        it.Value.Item1.LowResTimestamp as TimestampLowRes,
        it.Value.Item1.ExperimentalTime as Time)
    -> BehaviorSubject TrackResult

GroupWorkflow Projection(Description="Pulsepal Inputs must be floats from -10 to 10 with increments of 0.1")
    ExternalizedMapping(Value(DisplayName="StimDiameter (mm)"))
    -> FloatProperty(Value=1.56) => #1
    ExternalizedMapping(Value(DisplayName="Speed (mm/s)"))
    -> FloatProperty(Value=20) => #3
    ExternalizedMapping(Value(DisplayName="EdgeRadius (mm)"))
    -> FloatProperty(Value=25) => #5
    ExternalizedMapping(Value(DisplayName="MinInBetweenEvent (s)"))
    -> FloatProperty(Value=1) => #7
    ExternalizedMapping(Value(DisplayName="MaxInBetweenEvent (s)"))
    -> FloatProperty(Value=1) => #9
    ExternalizedMapping(Value(DisplayName="Occlusion (s)"))
    -> FloatProperty(Value=1) => #11
    #1, #3, #5, #7, #9, #11 -> Zip => #12
    ExternalizedMapping(Value(DisplayName="DelayOcclusion (s)"))
    -> FloatProperty(Value=10) => #14
    ExternalizedMapping(Value(DisplayName="Lethargy (s)"))
    -> FloatProperty(Value=0) => #16
    ExternalizedMapping(Value(DisplayName=TurnMode))
    -> FloatProperty(Value=1) => #18
    ExternalizedMapping(Value(DisplayName="DelayTurn (s)"))
    -> FloatProperty(Value=10) => #20
    #14, #16, #18, #20 -> Zip => #21
    #12, #21 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
      Expression:
        new(
            Item1.Item1 as StimDiameter,
            Item1.Item2 as Speed,
            Item1.Item3 as EdgeRadius,
            Item1.Item4 as MinInBetweenEvent,
            Item1.Item5 as MaxInBetweenEvent,
            Item1.Item6 as Occlusion,
            Item2.Item2 as Lethargy,
            Item2.Item1 as DelayOcclusion,
            Item2.Item3 as TurnMode,
            Item2.Item4 as DelayTurn
        )
    -> BehaviorSubject Params

    SubscribeSubject Draw
    -> Timestamp
    -> MemberSelector(Selector=Value) => #27
    SubscribeSubject TrackResult => #28
    #27, #28 -> WithLatestFrom => #29
    -> GroupWorkflow Protocol
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        SubscribeSubject Params => #3
        #2, #3 -> CombineLatest
        -> Bonsai.Scripting.IronPython.PythonTransform VRLoop => #5
          Script:
            import clr
            import math

            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Tuple, Convert

            # Persistent state for open loop circle motion
            theta_openloop = 0.0

            # ==========================================
            # DEMO MODE TOGGLE
            # Set to True to use Open Loop (pre-defined circle)
            # Set to False to use Closed Loop (live fly tracking)
            # ==========================================
            USE_OPEN_LOOP = True

            @returns(Tuple[Point2f, float])
            def process(value):
                global theta_openloop
                global USE_OPEN_LOOP

                # Unpack the zipped Item1
                zip_data = value.Item1
                FlyCentroid = zip_data.FlyCentroid
                FlyOrientation = zip_data.FlyOrientation

                # Safely convert dynamic C# time to a workable float
                Time = Convert.ToDouble(zip_data.Time)

                # -------------------
                # 1. Open Loop Section
                # -------------------
                R = 5.0            # mm
                speed = 10.0       # mm/s
                omega = speed / R  # rad/s

                theta_openloop = omega * Time
                X_open = R * math.cos(theta_openloop)
                Y_open = R * math.sin(theta_openloop)
                Angle_open = theta_openloop + (math.pi / 2.0)

                # -------------------
                # 2. Closed Loop Section
                # -------------------
                X_closed, Y_closed, Angle_closed = X_open, Y_open, Angle_open

                if FlyCentroid is not None and FlyOrientation is not None:
                    try:
                        # Safely unwrap the C# DynamicObjects to doubles
                        X_closed = Convert.ToDouble(FlyCentroid.X)
                        Y_closed = Convert.ToDouble(FlyCentroid.Y)
                        Angle_closed = Convert.ToDouble(FlyOrientation)
                    except Exception:
                        # If tracking temporarily outputs an invalid format, fallback to open loop coordinates
                        pass

                # -------------------
                # 3. Output Selection
                # -------------------
                if USE_OPEN_LOOP:
                    X = X_open
                    Y = Y_open
                    Angle = Angle_open
                else:
                    X = X_closed
                    Y = Y_closed
                    Angle = Angle_closed

                # Cast back to native float for the OpenCV Point2f constructor
                return Tuple.Create(Point2f(float(X), float(Y)), float(Angle))
        -> MemberSelector(Selector=Item1) => #6
        SubscribeSubject MM2VR => #7
        #6, #7 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #8
        -> MemberSelector(Selector=X) => #9
        -> PropertyMapping(LocationX) => #10
        #8 -> MemberSelector(Selector=Y) => #11
        -> PropertyMapping(LocationY) => #12
        #5 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Angle) => #14
        SubscribeSubject Params
        -> MemberSelector(Selector=StimDiameter) => #16
        SubscribeSubject MM2VR => #17
        #16, #17 -> IncludeWorkflow(Path=Extensions\HomographyScale.bonsai) => #18
        -> PropertyMapping(ExtentX) => #19
        #18 -> PropertyMapping(ExtentY) => #20
        #1, #10, #12, #14, #19, #20 -> Disable IncludeWorkflow => #21
          Path=BonVision:Primitives.DrawImage.bonsai
          TextureName=house
          ExtentX=0.59314
          ExtentY=0.59314
          LocationX=-0.06530897
          LocationY=-0.0110636307
          Layer=0
          Angle=712.957
          ScaleX=1
          ScaleY=1
          ShiftX=0
          ShiftY=0
        #9 -> PropertyMapping(LocationX) => #22
        #11 -> PropertyMapping(LocationY) => #23
        #18 -> PropertyMapping(Diameter) => #24
        #21, #22, #23, #24 -> IncludeWorkflow => #25
          Path=BonVision:Primitives.DrawCircle.bonsai
          Diameter=0.0370119326
          LocationX=-0.124895915
          LocationY=0.0317530371
          Layer=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=1
        #25, #5 -> Zip
        -> WorkflowOutput
    -> Timestamp => #31
    ExternalizedMapping(PhotoPeriod) => #32
    Source1=#32, Source3=#29 -> GroupWorkflow PhotodiodeFlash => #33
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item2.Time) => #1
        ExternalizedMapping(Value(DisplayName=PhotoPeriod))
        -> TimeSpanProperty(Value=PT0.5S)
        -> MemberSelector(Selector=TotalSeconds) => #4
        #1, #4 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform PhotodiodeFlash => #6
          Script:
            @returns(float)
            def process(value):
                """
                value: tuple (Item1, Item2)
                    - Item1: elapsed experimental time in seconds (float)
                    - Item2: period in milliseconds (float)
                Output:
                    1.0 → ON, 0.0 → OFF
                    ON for first half of period, OFF for second half, repeating
                """
                elapsed_time = value.Item1
                period_s = value.Item2

                # Compute the modulo to find position in cycle
                t_mod = elapsed_time % period_s

                # ON for first half, OFF for second half
                state = 1.0 if t_mod < (period_s / 2.0) else 0.0

                return state
        -> PropertyMapping(ColorA) => #7
        #0 -> MemberSelector(Selector=Item1) => #8
        #7, #8 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=1.23255813, LocationX=1, LocationY=-1, Layer=1, ColorR=0, ColorG=0, ColorB=0, ColorA=1)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp) => #11
        SubscribeSubject PhotoValue => #12
        #12, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item1) => #14
        #6, #11, #14 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1 as PhotoLightOff,
            it.Item2 as PhotoTimestamp,
            it.Item3 as PhotoValue)
        -> WorkflowOutput
    #31, #33, #29 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
      Expression:
        New(
        it.Item1.Timestamp as StimulusTimestamp,
        it.Item1.Value.Item2.Item1 as StimCentre,
        it.Item1.Value.Item2.Item2 as StimAngle,
        it.Item2.PhotoValue as PhotoValue,
        it.Item2.PhotoLightOff as PhotoLightOff,
        it.Item2.PhotoTimestamp as PhotoTimestamp,
        it.Item3.Item2.LowResFrame as LowResFrame,
        it.Item3.Item2.HighResFrame as HighResFrame,
        it.Item3.Item2.Time as Time)
    -> PublishSubject VROutput

GroupWorkflow Logging
    ExternalizedMapping(RootPath, Date, ProtocolName)
    -> GroupWorkflow LogPaths
        ExternalizedMapping(Value(DisplayName=RootPath))
        -> StringProperty(Value=C:\Users\ALBINO\Desktop) => #1
        StringProperty(Value=\) => #2
        #1, #2 -> Zip
        -> Format(Format={0}{1}, Selector="Item1,Item2")
        -> Take(Count=1)
        -> AsyncSubject RootPath

        SubscribeSubject RootPath => #7
        ExternalizedMapping(Value(DisplayName=Date))
        -> StringProperty(Value=Trash) => #9
        StringProperty(Value=\) => #10
        ExternalizedMapping(Value(DisplayName=ProtocolName))
        -> StringProperty(Value=Tests) => #12
        SubscribeSubject Params
        -> MemberSelector(Selector=Speed)
        -> Format(Format={0}mms, Selector=it) => #15
        #7, #9, #10, #12, #15 -> Zip
        -> Format(Format={0}{1}{2}{3}{4}, Selector="Item1,Item2,Item3,Item4,Item5")
        -> Take(Count=1)
        -> AsyncSubject SessionPath

    GroupWorkflow LogTrack
        SubscribeSubject SessionPath => #0
        StringProperty(Value=_Track_.csv) => #1
        #0, #1 -> Zip
        -> Format(Format={0}{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #4
        SubscribeSubject TrackResult => #5
        #4, #5 -> Bonsai.IO.CsvWriter(FileName=C:\Users\ALBINO\Desktop\Trash\Tests20mms_Track_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)

    GroupWorkflow LogVR
        SubscribeSubject SessionPath => #0
        StringProperty(Value=_VR_.csv) => #1
        #0, #1 -> Zip
        -> Format(Format={0}{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #4
        SubscribeSubject VROutput => #5
        #4, #5 -> Bonsai.IO.CsvWriter(FileName=C:\Users\ALBINO\Desktop\Trash\Tests20mms_VR_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)

    ExternalizedMapping(LowFramerate, HighFramerate)
    -> GroupWorkflow LogVideo
        SubscribeSubject LowResCamera => #0
        SubscribeSubject SessionPath => #1
        StringProperty(Value=_CamL_.avi) => #2
        #1, #2 -> Zip
        -> Format(Format={0}{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #5
        ExternalizedMapping(FrameRate(DisplayName=LowFramerate)) => #6
        Source1=#0, Source3=#5, Source3=#6 -> Bonsai.Vision.VideoWriter
          FileName=C:\Users\ALBINO\Desktop\Trash\Tests20mms_CamL_.avi
          Suffix=FileCount
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=85
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=Linear

        SubscribeSubject HighResCamera => #8
        SubscribeSubject SessionPath => #9
        StringProperty(Value=_CamH_.avi) => #10
        #9, #10 -> Zip
        -> Format(Format={0}{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #13
        ExternalizedMapping(FrameRate(DisplayName=HighFramerate)) => #14
        #8, #13, #14 -> Bonsai.Vision.VideoWriter
          FileName=C:\Users\ALBINO\Desktop\Trash\Tests20mms_CamH_.avi
          Suffix=FileCount
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=200
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=Linear

GroupWorkflow Termination
    Timer(DueTime=PT0S, Period=PT0.001S) => #0
    Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel Space Prior PageUp Next PageDown End Alt", SuppressRepetitions=true) => #1
    #0, #1 -> TakeUntil
    -> WorkflowOutput

    Disable SubscribeSubject ElapsedTime => #4
    Disable ExternalizedMapping(Value(DisplayName="ExpTime(s)")) => #5
    #4, #5 -> Disable Condition => #6
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=5))
        -> WorkflowOutput
    #4, #6 -> Disable TakeUntil
    -> Disable WorkflowOutput
-> WorkflowOutput

SubscribeSubject LowResCamera
SubscribeSubject HighResCamera
SubscribeSubject ElapsedTime
