WorkflowBuilder(Version=2.9.0)
GroupWorkflow Initiation
    ExternalizedMapping("PulsePal Port")
    -> GroupWorkflow PulsePal
        ExternalizedMapping(PortName(DisplayName="PulsePal Port"))
        -> Bonsai.PulsePal.CreatePulsePal(DeviceName=PulsePal, PortName=COM6, OutputChannels="", TriggerChannels="")
        -> MemberSelector(Selector=IsOpen) => #2
        Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=true) => #3
        #2, #3 -> TakeUntil
        -> PublishSubject PulsepalInitiated

    Disable ExternalizedMapping(LowResCam, LowResConfig, HighResCam, HighResConfig)
    -> GroupWorkflow Cameras
        Disable Bonsai.Vision.FileCapture
          FileName="C:\Users\ALBINO\Desktop\Portable Bonsai\resources\FemaleConcave_CamH_2.avi"
          PlaybackRate=0
          StartPosition=0
          PositionUnits=Frames
          Loop=false
          Playing=true
        -> Disable PublishSubject HighResCamera

        Disable Bonsai.Vision.FileCapture
          FileName="C:\Users\ALBINO\Desktop\Portable Bonsai\resources\FemaleConcave_CamL_2.avi"
          PlaybackRate=0
          StartPosition=0
          PositionUnits=Frames
          Loop=false
          Playing=true
        -> Disable PublishSubject LowResCamera

        ExternalizedMapping(DeviceId(DisplayName=HighResCam), ConfigFile(DisplayName=HighResConfig))
        -> Bonsai.uEye.uEyeCapture(DeviceId=1, ConfigFile=C:\Users\ALBINO\Desktop\HighResCamParams.ini)
        -> MemberSelector(Selector=Image) => #6
        Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=true) => #7
        #6, #7 -> TakeUntil
        -> PublishSubject HighResCamera

        ExternalizedMapping(DeviceId(DisplayName=LowResCam), ConfigFile(DisplayName=LowResConfig))
        -> Bonsai.uEye.uEyeCapture(DeviceId=2, ConfigFile=C:\Users\ALBINO\Desktop\LowResCamParams.ini)
        -> MemberSelector(Selector=Image) => #12
        Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=true) => #13
        #12, #13 -> TakeUntil
        -> PublishSubject LowResCamera

    ExternalizedMapping(DisplayDevice, TargetRenderFrequency, Width, Height)
    -> GroupWorkflow "Projector Window"
        ExternalizedMapping(DisplayDevice, TargetRenderFrequency, Width, Height, Location)
        -> Bonsai.Shaders.CreateWindow
          Width=1080
          Height=1080
          VSync=Off
          SwapSync=false
          ClearColor=White
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Hidden
          WindowState=Normal
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=200
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.TextureResources
          Textures
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=house
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=..\resources\house.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=1d-01
              Width=1024
              Height=1024
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=..\resources\1d-01.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=10d-01
              Width=1024
              Height=1024
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=..\resources\10d-01.png
              ColorType=Unchanged
              FlipMode=Vertical
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #6
        Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=true) => #7
        #6, #7 -> TakeUntil
        -> PublishSubject Draw

    ExternalizedMapping(PX2MM, MM2VL, MM2VR)
    -> GroupWorkflow "Coordinate Transformation"
        ExternalizedMapping(FileName(DisplayName=PX2MM))
        -> Bonsai.IO.CsvReader(FileName=C:\Users\ALBINO\Desktop\VRConversions\PX2MM.txt, ListSeparator="", ScanPattern="%f,%f,%f", SkipRows=0)
        -> SelectMany ForEachLine
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            #0 -> MemberSelector(Selector=Item2) => #2
            #0 -> MemberSelector(Selector=Item3) => #3
            #1, #2, #3 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> ToArray
        -> Take(Count=1)
        -> AsyncSubject PX2MM

        ExternalizedMapping(FileName(DisplayName=MM2VL))
        -> Bonsai.IO.CsvReader(FileName=C:\Users\ALBINO\Desktop\VRConversions\MM2VL.txt, ListSeparator="", ScanPattern="%f,%f,%f", SkipRows=0)
        -> SelectMany ForEachLine
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            #0 -> MemberSelector(Selector=Item2) => #2
            #0 -> MemberSelector(Selector=Item3) => #3
            #1, #2, #3 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> ToArray
        -> Take(Count=1)
        -> AsyncSubject MM2VL

        ExternalizedMapping(FileName(DisplayName=MM2VR))
        -> Bonsai.IO.CsvReader(FileName=C:\Users\ALBINO\Desktop\VRConversions\MM2VR.txt, ListSeparator="", ScanPattern="%f,%f,%f", SkipRows=0)
        -> SelectMany ForEachLine
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            #0 -> MemberSelector(Selector=Item2) => #2
            #0 -> MemberSelector(Selector=Item3) => #3
            #1, #2, #3 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> ToArray
        -> Take(Count=1)
        -> AsyncSubject MM2VR

    ExternalizedMapping("ExpTime(s)")
    -> GroupWorkflow GlobalTimer
        SubscribeSubject LowResCamera => #0
        -> Take(Count=1) => #1
        SubscribeSubject HighResCamera
        -> Take(Count=1) => #3
        #1, #3 -> Zip => #4
        #0, #4 -> SubscribeWhen
        -> TimeInterval
        -> MemberSelector(Selector=Interval.TotalSeconds)
        -> Accumulate => #8
        ExternalizedMapping(Value(DisplayName="ExpTime(s)")) => #9
        #9, #8 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=1530))
            -> WorkflowOutput
        -> Take(Count=1)
        -> PublishSubject End => #12
        #8, #12 -> TakeUntil
        -> PublishSubject ElapsedTime
        SubscribeSubject HighResCamera => #15
        #15, #3 -> SubscribeWhen => #16
        #16, #12 -> TakeUntil
        -> PublishSubject HighResTimer

    ExternalizedMapping("Photodiode Port")
    -> GroupWorkflow Photodiode
        ExternalizedMapping(PortName(DisplayName="Photodiode Port"))
        -> Bonsai.IO.Ports.CreateSerialPort
          Name=Photodiode
          PortName=COM4
          BaudRate=115200
          NewLine=\r\n
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=false
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        SubscribeSubject HighResTimer
        -> StringProperty(Value=REQ) => #3
        Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=true) => #4
        #3, #4 -> TakeUntil
        -> Bonsai.IO.Ports.SerialWriteLine(PortName=Photodiode, NewLine=\r\n)

        Bonsai.IO.Ports.SerialReadLine(PortName=Photodiode, NewLine=\r\n)
        -> Condition
            WorkflowInput Source1
            -> NotEqual(Operand=StringProperty(Value=E))
            -> WorkflowOutput
        -> Parse(Pattern=%i) => #9
        Bonsai.Windows.Input.KeyDown(Filter=End, SuppressRepetitions=true) => #10
        #9, #10 -> TakeUntil
        -> PublishSubject PhotoValue

GroupWorkflow Tracking
    GroupWorkflow "Pulsepal Control"(Description="Pulsepal Inputs must be floats from -10 to 10 with increments of 0.1")
        SubscribeSubject HighResTimer => #0
        SubscribeSubject End => #1
        #0, #1 -> TakeUntil => #2
        SubscribeSubject TrackResult
        -> Bonsai.Scripting.IronPython.PythonTransform SelectFly => #4
          Script:
            import clr
            import math
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f

            @returns(Point2f)
            def process(value):
                fly_centroid = value.FlyCentroid
                fly2_centroid = value.Fly2Centroid

                # Check if the point is missing or contains NaN values
                if (fly_centroid is None or
                    math.isnan(fly_centroid.X) or
                    math.isnan(fly_centroid.Y)):

                    # Output the fallback centroid
                    return fly2_centroid

                # Otherwise, output the primary centroid
                return fly_centroid
        SubscribeSubject MM2VL => #5
        #4, #5 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #6
        -> MemberSelector(Selector=X)
        -> PropertyMapping(Value)
        -> DoubleProperty(Value=NaN)
        -> IncludeWorkflow(Path=Extensions\Clamp.bonsai, MaxValue=10, MinValue=-10)
        -> PropertyMapping(Voltage) => #11
        #2, #11 -> Bonsai.PulsePal.SetFixedVoltage(DeviceName=PulsePal, Channel=2, Voltage=-10)
        #6 -> MemberSelector(Selector=Y)
        -> PropertyMapping(Value)
        -> DoubleProperty(Value=NaN)
        -> IncludeWorkflow(Path=Extensions\Clamp.bonsai, MaxValue=10, MinValue=-10)
        -> PropertyMapping(Voltage) => #17
        #17, #2 -> Bonsai.PulsePal.SetFixedVoltage(DeviceName=PulsePal, Channel=1, Voltage=-10)

    SubscribeSubject LowResCamera
    -> GroupWorkflow ProcessLowResInfo => #2
        WorkflowInput Source1 => #0
        -> Timestamp => #1
        #0 -> IntProperty(Value=1)
        -> Accumulate => #3
        SubscribeSubject HighResCamera => #4
        -> Timestamp => #5
        #4 -> IntProperty(Value=1)
        -> Accumulate => #7
        #5, #7 -> Zip => #8
        #0, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #10
        SubscribeSubject ElapsedTime => #11
        #0, #11 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #13
        #1, #3, #10, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1.Value as LowResFrame,
            it.Item1.Timestamp as LowResTimestamp,
            it.Item2 as LowResFrameNumber,
            it.Item3.Item1 as HighResTimestamp,
            it.Item3.Item2 as HighResFrameNumber,
            it.Item4 as ExperimentalTime)
        -> WorkflowOutput
    -> MemberSelector(Selector=LowResFrame) => #3
    ExternalizedMapping(ThresholdValue, MinArea, MaxArea) => #4
    #3, #4 -> GroupWorkflow ExtractBinaryRegions(Description="Extracts the Centroid and Region Extremes of the Two Biggest Binary Regions")
        WorkflowInput Source1
        -> Bonsai.Vision.Grayscale => #1
        ExternalizedMapping(ThresholdValue) => #2
        #1, #2 -> Bonsai.Vision.Threshold(ThresholdValue=110, MaxValue=255, ThresholdType=BinaryInv) => #3
        ExternalizedMapping(MinArea, MaxArea) => #4
        #3, #4 -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=10, MaxArea=2000)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> SelectMany 2LargestBinaryRegions
            WorkflowInput Source1
            -> Bonsai.Vision.SortBinaryRegions
            -> Bonsai.Vision.TakeBinaryRegions(Count=2)
            -> Concat => #3
            -> Bonsai.Vision.Centroid => #4
            #3 -> Bonsai.Vision.BinaryRegionExtremes(Method=MajorAxis) => #5
            #4, #5 -> Zip
            -> ToArray
            -> Bonsai.Scripting.IronPython.PythonTransform CheckMissTracking => #8
              Script:
                import clr
                clr.AddReference("OpenCV.Net")
                from OpenCV.Net import *
                from System import Tuple

                nanpoint = Point2f(float.NaN,float.NaN)

                @returns(Tuple[Tuple[Point2f,Point2f,Point2f],Tuple[Point2f,Point2f,Point2f]])
                def process(value):

                  if len(value) == 0:
                    return Tuple.Create(Tuple.Create(nanpoint,nanpoint,nanpoint),
                                        Tuple.Create(nanpoint,nanpoint,nanpoint))
                  elif len(value) == 1:
                    return Tuple.Create(Tuple.Create(value[0].Item1,value[0].Item2.Item1,value[0].Item2.Item2),
                                        Tuple.Create(nanpoint,nanpoint,nanpoint))
                  else:
                    return Tuple.Create(Tuple.Create(value[0].Item1,value[0].Item2.Item1,value[0].Item2.Item2),
                                        Tuple.Create(value[1].Item1,value[1].Item2.Item1,value[1].Item2.Item2))
            -> MemberSelector(Selector=Item1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var" => #10
              Expression:
                New(
                it.Item1 as Centroid,
                it.Item2 as MajorAxisExtreme1,
                it.Item3 as MajorAxisExtreme2)
            #8 -> MemberSelector(Selector=Item2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var" => #12
              Expression:
                New(
                it.Item1 as Centroid,
                it.Item2 as MajorAxisExtreme1,
                it.Item3 as MajorAxisExtreme2)
            #10, #12 -> Zip
            -> WorkflowOutput
        -> WorkflowOutput
    -> GroupWorkflow DetectFly => #6
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform DetectFemale => #1
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            # Global Variables
            smallPos = Point2f(float(0),float(0))
            bigPos = Point2f(float(0),float(0))
            smallHis = float(0)
            bigHis = float(0)
            check = float(25)

            def distancesquare(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return dx * dx + dy * dy

            @returns(Tuple[Tuple[Point2f,Tuple[Point2f,Point2f]],Tuple[Point2f,Tuple[Point2f,Point2f]]])
            def process(value):
              #Load Global Variables
              global smallPos, bigPos, smallHis, bigHis, check

              bigFly = value.Item1.Centroid
              bigPt1 = value.Item1.MajorAxisExtreme1
              bigPt2 = value.Item1.MajorAxisExtreme2
              smallFly = value.Item2.Centroid
              smallPt1 = value.Item2.MajorAxisExtreme1
              smallPt2 = value.Item2.MajorAxisExtreme2

              if distancesquare(bigFly,bigPos) > distancesquare(smallFly,bigPos):
                auxFly = bigFly
                auxPt1 = bigPt1
                auxPt2 = bigPt2
                bigFly = smallFly
                bigPt1 = smallPt1
                bigPt2 = smallPt2
                smallFly = auxFly
                smallPt1 = auxPt1
                smallPt2 = auxPt2

              bigLength = distancesquare(bigPt1,bigPt2)
              smallLength = distancesquare(smallPt1,smallPt2)
              if bigHis == 0:
                bigHis = bigLength
              if smallHis == 0:
                smallHis = smallLength
              dnow = distancesquare(Point2f(bigHis,smallHis),Point2f(bigLength,smallLength))
              dflip = distancesquare(Point2f(smallHis,bigHis),Point2f(bigLength,smallLength))
              if dnow > dflip:
                check = check + 1
              if check == 25:
                auxFly = bigFly
                auxPt1 = bigPt1
                auxPt2 = bigPt2
                bigFly = smallFly
                bigPt1 = smallPt1
                bigPt2 = smallPt2
                smallFly = auxFly
                smallPt1 = auxPt1
                smallPt2 = auxPt2
                bigLength = distancesquare(bigPt1,bigPt2)
                smallLength = distancesquare(smallPt1,smallPt2)
                check = 0
              bigHis = bigHis * 0.95 + bigLength * 0.05
              smallHis = smallHis * 0.95 + smallLength * 0.05

              bigPos = bigFly
              smallPos = smallFly

              return Tuple.Create(Tuple.Create(smallPos,Tuple.Create(smallPt1,smallPt2)),
                                    Tuple.Create(bigFly,Tuple.Create(bigPt1,bigPt2)))
        -> MemberSelector(Selector=Item1.Item1) => #2
        #1 -> MemberSelector(Selector=Item1.Item2)
        -> Bonsai.Scripting.IronPython.PythonTransform FindHead => #4
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            # Global Variables
            velocity = None
            head = None
            tail = None
            counter = None
            history = None


            def distancesquare(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return dx * dx + dy * dy

            def angleline(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return math.atan2(dy, dx)

            def cossimilarity(pt1,pt2):
              if (dotproduct(pt1,pt1)*dotproduct(pt2,pt2)) == 0:
                return float(1)
              else:
                return float(dotproduct(pt1,pt2)/(math.sqrt(dotproduct(pt1,pt1))*math.sqrt(dotproduct(pt2,pt2))))

            def dotproduct(pt1,pt2):
              return pt1.X*pt2.X+pt1.Y*pt2.Y

            @returns(Tuple[Point2f])
            def process(value):
                #Load Global Variables
                global velocity, head, tail, counter, history

                pt1 = value.Item1
                pt2 = value.Item2

                if math.isnan(pt1.X):
                  return Tuple.Create(Point2f(float.NaN,float.NaN))
                else:
                  if head is None:
                    head = pt1
                    tail = pt2
                    return Tuple.Create(Point2f(float.NaN,float.NaN))
                  else:
                    # If only one point has been seen
                    if velocity is None:
                      if distancesquare(pt1, head) < distancesquare(pt1, tail):
                        head = pt1
                        tail = pt2
                      else:
                        head = pt2
                        tail = pt1
                      velocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      history = float(0)
                      counter = float(0)
                    # If more then one point has been seen
                    else:
                      bodyOri = Point2f(pt1.X-pt2.X,pt1.Y-pt2.Y)
                      if cossimilarity(bodyOri,velocity) < 0:
                        aux = pt1
                        pt1 = pt2
                        pt2 = aux
                      instantaneousVelocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      distance = math.sqrt(distancesquare(pt1,head))
                      if counter < 8:
                        counter += 1
                      if distance > 0 and abs(cossimilarity(instantaneousVelocity,velocity)) > 0.2:
                        history = (history*(counter-1)/counter)+cossimilarity(instantaneousVelocity,velocity)/counter
                        velocity = Point2f(((velocity.X*(counter-1))/counter)+(instantaneousVelocity.X/counter),((velocity.Y*(counter-1))/counter)+(instantaneousVelocity.Y/counter))
                      if history < 0:
                        counter = float(0)
                        history = float(0)
                        head = pt2
                        tail = pt1
                        velocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      else:
                        head = pt1
                        tail = pt2
                      #velocity = instantaneousVelocity
                    # Flip Y Axis for cartesian referential normalization
                    return Tuple.Create(head)
        #2, #4 -> Zip => #5
        #1 -> MemberSelector(Selector=Item2.Item1) => #6
        #1 -> MemberSelector(Selector=Item2.Item2)
        -> Bonsai.Scripting.IronPython.PythonTransform FindHead => #8
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            # Global Variables
            velocity = None
            head = None
            tail = None
            counter = None
            history = None


            def distancesquare(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return dx * dx + dy * dy

            def angleline(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return math.atan2(dy, dx)

            def cossimilarity(pt1,pt2):
              if (dotproduct(pt1,pt1)*dotproduct(pt2,pt2)) == 0:
                return float(1)
              else:
                return float(dotproduct(pt1,pt2)/(math.sqrt(dotproduct(pt1,pt1))*math.sqrt(dotproduct(pt2,pt2))))

            def dotproduct(pt1,pt2):
              return pt1.X*pt2.X+pt1.Y*pt2.Y

            @returns(Tuple[Point2f])
            def process(value):
                #Load Global Variables
                global velocity, head, tail, counter, history

                pt1 = value.Item1
                pt2 = value.Item2

                if math.isnan(pt1.X):
                  return Tuple.Create(Point2f(float.NaN,float.NaN))
                else:
                  if head is None:
                    head = pt1
                    tail = pt2
                    return Tuple.Create(Point2f(float.NaN,float.NaN))
                  else:
                    # If only one point has been seen
                    if velocity is None:
                      if distancesquare(pt1, head) < distancesquare(pt1, tail):
                        head = pt1
                        tail = pt2
                      else:
                        head = pt2
                        tail = pt1
                      velocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      history = float(0)
                      counter = float(0)
                    # If more then one point has been seen
                    else:
                      bodyOri = Point2f(pt1.X-pt2.X,pt1.Y-pt2.Y)
                      if cossimilarity(bodyOri,velocity) < 0:
                        aux = pt1
                        pt1 = pt2
                        pt2 = aux
                      instantaneousVelocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      distance = math.sqrt(distancesquare(pt1,head))
                      if counter < 8:
                        counter += 1
                      if distance > 0 and abs(cossimilarity(instantaneousVelocity,velocity)) > 0.2:
                        history = (history*(counter-1)/counter)+cossimilarity(instantaneousVelocity,velocity)/counter
                        velocity = Point2f(((velocity.X*(counter-1))/counter)+(instantaneousVelocity.X/counter),((velocity.Y*(counter-1))/counter)+(instantaneousVelocity.Y/counter))
                      if history < 0:
                        counter = float(0)
                        history = float(0)
                        head = pt2
                        tail = pt1
                        velocity = Point2f(pt1.X-head.X,pt1.Y-head.Y)
                      else:
                        head = pt1
                        tail = pt2
                      #velocity = instantaneousVelocity
                    # Flip Y Axis for cartesian referential normalization
                    return Tuple.Create(head)
        #6, #8 -> Zip => #9
        #5, #9 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1.Item1 as FlyCentroid,
            it.Item1.Item2.Item1 as FlyHead,
            it.Item2.Item1 as Fly2Centroid,
            it.Item2.Item2.Item1 as Fly2Head)
        -> WorkflowOutput
    -> MemberSelector(Selector=FlyCentroid) => #7
    SubscribeSubject PX2MM => #8
    #7, #8 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #9
    #6 -> MemberSelector(Selector=FlyHead) => #10
    #10, #8 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #11
    #9, #11 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform CalculateOrientation
      Script:
        import math
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import Point2f
        from System import Single, Tuple

        def angleline(pt1,pt2):
          dx = (pt2.X - pt1.X)
          dy = (pt2.Y - pt1.Y)
          return math.atan2(dy, dx)

        @returns(float)
        def process(value):
            centroid = value.Item1
            head = value.Item2
            orientation = angleline(centroid,head)
            return float(orientation)
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var" => #14
      Expression:
        New(
        it as FlyOrientation)
    #6 -> MemberSelector(Selector=Fly2Centroid) => #15
    #15, #8 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #16
    #6 -> MemberSelector(Selector=Fly2Head) => #17
    #17, #8 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #18
    #16, #18 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform CalculateOrientation
      Script:
        import math
        import clr
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import Point2f
        from System import Single, Tuple

        def angleline(pt1,pt2):
          dx = (pt2.X - pt1.X)
          dy = (pt2.Y - pt1.Y)
          return math.atan2(dy, dx)

        @returns(float)
        def process(value):
            centroid = value.Item1
            head = value.Item2
            orientation = angleline(centroid,head)
            return float(orientation)
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var" => #21
      Expression:
        New(
        it as Fly2Orientation)
    #2, #9, #11, #14, #16, #18, #21 -> Zip => #22
    #3 -> GroupWorkflow ExtractRedLED(Description="Extracts the Centroid and Region Extremes of the Two Biggest Binary Regions") => #23
        WorkflowInput Source1
        -> Bonsai.Vision.MaskPolygon
          Regions(ArrayOfPoint(Point(X=166, Y=835), Point(X=132, Y=814), Point(X=132, Y=791), Point(X=173, Y=791)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Vision.Threshold(ThresholdValue=3, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=2, MaxArea=10000)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Area)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    #22, #23 -> Zip
    -> Timestamp
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var" => #26
      Expression:
        New(
        it.Value.Item1.Item1.LowResFrameNumber as LowResFrame,
        it.Value.Item1.Item1.HighResFrameNumber as HighResFrame,
        it.Value.Item1.Item2 as FlyCentroid,
        it.Value.Item1.Item3 as FlyHead,
        it.Value.Item1.Item4 as FlyOrientation,
        it.Value.Item1.Item5 as Fly2Centroid,
        it.Value.Item1.Item6 as Fly2Head,
        it.Value.Item1.Item7 as Fly2Orientation,
        it.Value.Item2 as RedLEDDetector,
        it.Timestamp as TimestampTracking,
        it.Value.Item1.Item1.LowResTimestamp as TimestampLowRes,
        it.Value.Item1.Item1.ExperimentalTime as Time)
    SubscribeSubject End => #27
    #26, #27 -> TakeUntil
    -> BehaviorSubject TrackResult
    #3, #6 -> Zip
    -> Bonsai.Scripting.IronPython.PythonTransform Visualizer => #31
      Script:
        import clr
        import math
        clr.AddReference("OpenCV.Net")
        from OpenCV.Net import IplImage, Point, Scalar, CV, ColorConversion

        def is_valid(pt):
            # Keeping the hasattr checks for X and Y to be extra safe
            return (
                pt is not None and
                hasattr(pt, 'X') and
                hasattr(pt, 'Y') and
                not math.isnan(pt.X) and
                not math.isnan(pt.Y)
            )

        @returns(IplImage)
        def process(value):
            # 1. Maintain your exact input structure
            image, points = value

            # 2. Convert grayscale (1 channel) to color (3 channels) if necessary
            if image.Channels == 1:
                color_image = IplImage(image.Size, image.Depth, 3)
                CV.CvtColor(image, color_image, ColorConversion.Gray2Bgr)
                image = color_image

            # 3. Safely extract named properties using getattr()
            # If the property doesn't exist on the 'points' object, it defaults to None
            p1 = getattr(points, 'FlyCentroid', None)
            p2 = getattr(points, 'FlyHead', None)
            p3 = getattr(points, 'Fly2Centroid', None)
            p4 = getattr(points, 'Fly2Head', None)

            # 4. Draw each separately
            if is_valid(p1):
                CV.Circle(image, Point(int(p1.X), int(p1.Y)), 1, Scalar(255, 0, 0), -1)

            if is_valid(p2):
                CV.Circle(image, Point(int(p2.X), int(p2.Y)), 1, Scalar(0, 255, 0), -1)

            if is_valid(p3):
                CV.Circle(image, Point(int(p3.X), int(p3.Y)), 1, Scalar(0, 0, 255), -1)

            if is_valid(p4):
                CV.Circle(image, Point(int(p4.X), int(p4.Y)), 1, Scalar(0, 255, 255), -1)

            return image
    SubscribeSubject End => #32
    #31, #32 -> TakeUntil
    -> WorkflowOutput

GroupWorkflow Projection
    ExternalizedMapping(Value(DisplayName="StimDiameter (mm)"))
    -> FloatProperty(Value=1.56) => #1
    ExternalizedMapping(Value(DisplayName="Speed (mm/s)"))
    -> FloatProperty(Value=20) => #3
    ExternalizedMapping(Value(DisplayName="EdgeRadius (mm)"))
    -> FloatProperty(Value=25) => #5
    ExternalizedMapping(Value(DisplayName="MinInBetweenEvent (s)"))
    -> FloatProperty(Value=5) => #7
    ExternalizedMapping(Value(DisplayName="MaxInBetweenEvent (s)"))
    -> FloatProperty(Value=7.5) => #9
    ExternalizedMapping(Value(DisplayName="Occlusion (s)"))
    -> FloatProperty(Value=0.5) => #11
    #1, #3, #5, #7, #9, #11 -> Zip => #12
    ExternalizedMapping(Value(DisplayName="DelayOcclusion (s)"))
    -> FloatProperty(Value=300) => #14
    ExternalizedMapping(Value(DisplayName="Lethargy (s)"))
    -> FloatProperty(Value=30) => #16
    ExternalizedMapping(Value(DisplayName=TurnMode))
    -> FloatProperty(Value=1) => #18
    ExternalizedMapping(Value(DisplayName="DelayTurn (s)"))
    -> FloatProperty(Value=300) => #20
    ExternalizedMapping(Value(DisplayName=Direction))
    -> FloatProperty(Value=1) => #22
    #14, #16, #18, #20, #22 -> Zip => #23
    #12, #23 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
      Expression:
        new(
            Item1.Item1 as StimDiameter,
            Item1.Item2 as Speed,
            Item1.Item3 as EdgeRadius,
            Item1.Item4 as MinInBetweenEvent,
            Item1.Item5 as MaxInBetweenEvent,
            Item1.Item6 as Occlusion,
            Item2.Item2 as Lethargy,
            Item2.Item1 as DelayOcclusion,
            Item2.Item3 as TurnMode,
            Item2.Item4 as DelayTurn,
            Item2.Item5 as Direction
        )
    -> Take(Count=1)
    -> BehaviorSubject Params

    SubscribeSubject VROutput
    -> MemberSelector(Selector=RedLED) => #29
    Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=false) => #30
    #29, #30 -> TakeUntil => #31
    SubscribeSubject End => #32
    #31, #32 -> TakeUntil => #33
    BooleanProperty(Value=false)
    -> Take(Count=1) => #35
    #33, #35 -> Concat
    -> Bonsai.Arduino.DigitalOutput(PortName=COM7, Pin=3)

    SubscribeSubject Draw
    -> Timestamp
    -> MemberSelector(Selector=Value) => #40
    SubscribeSubject TrackResult => #41
    #40, #41 -> WithLatestFrom => #42
    -> GroupWorkflow Protocol
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        SubscribeSubject Params => #3
        #2, #3 -> CombineLatest
        -> Bonsai.Scripting.IronPython.PythonTransform VRLoop
          Script:
            import clr
            import math
            import random

            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Tuple, Convert

            # ==========================================
            # DEMO MODE TOGGLE
            # Set to True to use Open Loop (Simulated Protocol Target)
            # Set to False to use Closed Loop (Live Fly Tracking Override)
            # ==========================================
            USE_OPEN_LOOP = True

            # ==========================================
            # CONSTANTS NOT PROVIDED IN PARAMS
            # ==========================================
            DT = 0.011765       # Fixed time interval between frames (seconds)

            # ==========================================
            # GLOBALS FOR PROTOCOL STATE
            # ==========================================
            StimX = None
            StimY = None
            StimOri = None
            state = None
            event = None
            current_angle = 0.0
            current_radius = 0.0
            angular_dir = 1
            steps_taken = 0.0
            target_steps = 0.0
            path_mode = 0
            is_occlusion_active = False
            current_turn_modifier = 1
            red_led_state = True # Initialize Red LED state

            # Updated signature: Added a 7th float for the Red LED state
            # Time (float), StimPosition (Point2f), StimOri (float), State (float), Event (float), Occluded (float), RedLED (float)
            @returns(Tuple[float, Point2f, float, float, float, float, bool])
            def process(value):
                global StimX, StimY, StimOri, state, event
                global current_angle, current_radius, angular_dir, steps_taken, target_steps, path_mode
                global is_occlusion_active, current_turn_modifier, red_led_state
                global USE_OPEN_LOOP

                # ---------------------------------------------------------
                # 1. Unpack Tracking Data (Item1)
                # ---------------------------------------------------------
                zip_data = value.Item1
                FlyCentroid = zip_data.FlyCentroid
                FlyOrientation = zip_data.FlyOrientation
                Time = Convert.ToDouble(zip_data.Time)

                # ---------------------------------------------------------
                # 2. Unpack Dynamic Parameters (Item2)
                # ---------------------------------------------------------
                params = value.Item2

                SPEED = Convert.ToDouble(params.Speed)
                R = Convert.ToDouble(params.EdgeRadius)
                MIN_EVENT_TIME = Convert.ToDouble(params.MinInBetweenEvent)
                MAX_EVENT_TIME = Convert.ToDouble(params.MaxInBetweenEvent)
                OCCLUSION_TIME = Convert.ToDouble(params.Occlusion)
                LETHARGY_TIME = Convert.ToDouble(params.Lethargy)
                DELAY_OCCLUSION_TIME = Convert.ToDouble(params.DelayOcclusion)
                DELAY_TURN_TIME = Convert.ToDouble(params.DelayTurn)
                TURN_MODE = Convert.ToInt32(params.TurnMode)
                SIGN = Convert.ToInt32(params.Direction)

                # Derived Protocol Constants
                DIST_PER_STEP = SPEED * DT
                OCCLUSION_DIST = SPEED * OCCLUSION_TIME
                OCCLUSION_RADIUS = OCCLUSION_DIST / 2.0

                # ---------------------------------------------------------
                # PHASE 1: Initialization & Lethargy Period
                # ---------------------------------------------------------
                if Time < LETHARGY_TIME or StimX is None:
                    StimX = R
                    StimY = 0.0
                    StimOri = 0.0
                    state = 99
                    event = 0

                    current_angle = 0.0
                    current_radius = R
                    angular_dir = SIGN
                    steps_taken = 0.0
                    path_mode = 0
                    is_occlusion_active = False
                    current_turn_modifier = 1

                    target_time = random.uniform(MIN_EVENT_TIME, MAX_EVENT_TIME)
                    target_steps = target_time / DT

                    occluded = 0.0

                # ---------------------------------------------------------
                # PHASE 2: Protocol Execution Loop
                # ---------------------------------------------------------
                else:
                    PrevX, PrevY = StimX, StimY
                    distance_to_move = DIST_PER_STEP

                    while distance_to_move > 0.0001:

                        if path_mode == 0:
                            dist_to_turn = (target_steps - steps_taken) * DIST_PER_STEP
                            if distance_to_move < dist_to_turn:
                                current_angle += angular_dir * (distance_to_move / R)
                                steps_taken += distance_to_move / DIST_PER_STEP
                                distance_to_move = 0.0
                            else:
                                current_angle += angular_dir * (dist_to_turn / R)
                                distance_to_move -= dist_to_turn
                                time_active = Time - LETHARGY_TIME

                                if time_active < DELAY_TURN_TIME:
                                    path_mode = 1
                                else:
                                    if TURN_MODE == 0:
                                        rand_choice = random.random()
                                        if rand_choice < 0.333333:
                                            path_mode = 1
                                        elif rand_choice < 0.666667:
                                            path_mode = 2
                                            current_turn_modifier = 1
                                        else:
                                            path_mode = 2
                                            current_turn_modifier = -1
                                    else:
                                        if random.random() < 0.5:
                                            path_mode = 1
                                        else:
                                            path_mode = 2
                                            current_turn_modifier = SIGN * TURN_MODE

                                if time_active < DELAY_OCCLUSION_TIME:
                                    is_occlusion_active = False
                                else:
                                    is_occlusion_active = (random.random() < 0.5)

                                current_radius = R

                        elif path_mode == 1:
                            dist_to_edge = current_radius - (-R)
                            if distance_to_move < dist_to_edge:
                                current_radius -= distance_to_move
                                distance_to_move = 0.0
                            else:
                                distance_to_move -= dist_to_edge
                                current_angle += math.pi
                                current_radius = R
                                path_mode = 0
                                steps_taken = 0.0
                                target_steps = random.uniform(MIN_EVENT_TIME, MAX_EVENT_TIME) / DT
                                is_occlusion_active = False

                        elif path_mode == 2:
                            dist_to_center = current_radius
                            if distance_to_move < dist_to_center:
                                current_radius -= distance_to_move
                                distance_to_move = 0.0
                            else:
                                distance_to_move -= dist_to_center
                                current_radius = 0.0
                                current_angle += current_turn_modifier * (math.pi / 2.0)
                                path_mode = 3

                        elif path_mode == 3:
                            dist_to_edge = R - current_radius
                            if distance_to_move < dist_to_edge:
                                current_radius += distance_to_move
                                distance_to_move = 0.0
                            else:
                                distance_to_move -= dist_to_edge
                                current_radius = R
                                path_mode = 0
                                steps_taken = 0.0
                                target_steps = random.uniform(MIN_EVENT_TIME, MAX_EVENT_TIME) / DT
                                is_occlusion_active = False

                    # --- MOVEMENT EXECUTION ---
                    StimX = current_radius * math.cos(current_angle)
                    StimY = current_radius * math.sin(current_angle)

                    if StimX != PrevX or StimY != PrevY:
                        StimOri = math.atan2(StimY - PrevY, StimX - PrevX)

                    # --- STATE & EVENT EVALUATION ---
                    if path_mode == 0:
                        state = 0
                        event = 0
                    elif path_mode == 1:
                        state = 1 if current_radius >= 0 else 2
                        event = 2 if is_occlusion_active else 1
                    elif path_mode == 2 or path_mode == 3:
                        state = 1 if path_mode == 2 else 2
                        if current_turn_modifier == SIGN:
                            event = 4 if is_occlusion_active else 3
                        else:
                            event = 6 if is_occlusion_active else 5

                # ---------------------------------------------------------
                # PHASE 3: Occlusion Calculation
                # ---------------------------------------------------------
                if is_occlusion_active and abs(current_radius) <= OCCLUSION_RADIUS:
                    occluded = 1.0
                else:
                    occluded = 0.0

                # ---------------------------------------------------------
                # PHASE 4: Open Loop vs Closed Loop Selection
                # ---------------------------------------------------------
                final_X = StimX
                final_Y = StimY
                final_Ori = StimOri

                if not USE_OPEN_LOOP:
                    if FlyCentroid is not None and FlyOrientation is not None:
                        try:
                            final_X = Convert.ToDouble(FlyCentroid.X)
                            final_Y = Convert.ToDouble(FlyCentroid.Y)
                            final_Ori = Convert.ToDouble(FlyOrientation)
                        except Exception:
                            pass

                # ---------------------------------------------------------
                # PHASE 5: Red LED Controller
                # ---------------------------------------------------------
                # Set to always True for now
                red_led_state = True

                # Return structured tuple
                return Tuple.Create(
                    float(Time),
                    Point2f(float(final_X), float(final_Y)),
                    float(final_Ori),
                    float(state),
                    float(event),
                    float(occluded),
                    bool(red_led_state)
                )
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var" => #6
          Expression:
            new(
                Item1 as Time,
                Item2 as StimPosition,
                Item3 as StimOrientation,
                Item4 as State,
                Item5 as Event,
                Item6 as Occluded,
                Item7 as Red
            )
        -> MemberSelector(Selector=StimPosition) => #7
        SubscribeSubject MM2VR => #8
        #7, #8 -> IncludeWorkflow(Path=Extensions\HomographyTransform.bonsai) => #9
        -> MemberSelector(Selector=X)
        -> PropertyMapping(LocationX) => #11
        #9 -> MemberSelector(Selector=Y)
        -> PropertyMapping(LocationY) => #13
        SubscribeSubject Params
        -> MemberSelector(Selector=StimDiameter) => #15
        SubscribeSubject MM2VR => #16
        #15, #16 -> IncludeWorkflow(Path=Extensions\HomographyScale.bonsai)
        -> PropertyMapping(Diameter) => #18
        #6 -> MemberSelector(Selector=Occluded)
        -> Multiply(Operand=DoubleProperty(Value=-1))
        -> Add(Operand=DoubleProperty(Value=1))
        -> PropertyMapping(ColorA) => #22
        #1, #11, #13, #18, #22 -> IncludeWorkflow => #23
          Path=BonVision:Primitives.DrawCircle.bonsai
          Diameter=0.020957334
          LocationX=-0.326551884
          LocationY=0.134269282
          Layer=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=1
        #23, #6 -> Zip
        -> WorkflowOutput
    -> Timestamp => #44
    ExternalizedMapping(PhotoPeriod) => #45
    Source1=#45, Source3=#42 -> GroupWorkflow PhotodiodeFlash => #46
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item2.Time) => #1
        ExternalizedMapping(Value(DisplayName=PhotoPeriod))
        -> TimeSpanProperty(Value=PT0.5S)
        -> MemberSelector(Selector=TotalSeconds) => #4
        #1, #4 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform PhotodiodeFlash => #6
          Script:
            @returns(float)
            def process(value):
                """
                value: tuple (Item1, Item2)
                    - Item1: elapsed experimental time in seconds (float)
                    - Item2: period in milliseconds (float)
                Output:
                    1.0 → ON, 0.0 → OFF
                    ON for first half of period, OFF for second half, repeating
                """
                elapsed_time = value.Item1
                period_s = value.Item2

                # Compute the modulo to find position in cycle
                t_mod = elapsed_time % period_s

                # ON for first half, OFF for second half
                state = 1.0 if t_mod < (period_s / 2.0) else 0.0

                return state
        -> PropertyMapping(ColorA) => #7
        #0 -> MemberSelector(Selector=Item1) => #8
        #7, #8 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, Diameter=1.23255813, LocationX=1, LocationY=-1, Layer=1, ColorR=0, ColorG=0, ColorB=0, ColorA=0)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp) => #11
        SubscribeSubject PhotoValue => #12
        #12, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item1) => #14
        #6, #11, #14 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1 as PhotoLightOff,
            it.Item2 as PhotoTimestamp,
            it.Item3 as PhotoValue)
        -> WorkflowOutput
    #44, #46, #42 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var" => #48
      Expression:
        New(
        it.Item1.Timestamp as StimulusTimestamp,
        it.Item1.Value.Item2.StimPosition as StimCentre,
        it.Item1.Value.Item2.StimOrientation as StimAngle,
        it.Item1.Value.Item2.Time as StimTime,
        it.Item1.Value.Item2.State as StimState,
        it.Item1.Value.Item2.Event as StimEvent,
        it.Item1.Value.Item2.Occluded as StimOccluded,
        it.Item1.Value.Item2.Red as RedLED,
        it.Item2.PhotoValue as PhotoValue,
        it.Item2.PhotoLightOff as PhotoLightOff,
        it.Item2.PhotoTimestamp as PhotoTimestamp,
        it.Item3.Item2.LowResFrame as LowResFrame,
        it.Item3.Item2.HighResFrame as HighResFrame,
        it.Item3.Item2.Time as Time)
    SubscribeSubject End => #49
    #48, #49 -> TakeUntil
    -> PublishSubject VROutput

GroupWorkflow Logging
    ExternalizedMapping(RootPath, Date, ProtocolName)
    -> GroupWorkflow LogPaths
        ExternalizedMapping(Value(DisplayName=RootPath))
        -> StringProperty(Value=C:\Users\ALBINO\Desktop) => #1
        StringProperty(Value=\) => #2
        #1, #2 -> Zip
        -> Format(Format={0}{1}, Selector="Item1,Item2")
        -> Take(Count=1)
        -> AsyncSubject RootPath

        SubscribeSubject RootPath => #7
        ExternalizedMapping(Value(DisplayName=Date))
        -> StringProperty(Value=20260610) => #9
        StringProperty(Value=\) => #10
        ExternalizedMapping(Value(DisplayName=ProtocolName))
        -> StringProperty(Value=Occlusion) => #12
        SubscribeSubject Params
        -> MemberSelector(Selector=Speed)
        -> Format(Format={0}mms, Selector=it) => #15
        SubscribeSubject Params
        -> MemberSelector(Selector=Occlusion)
        -> Format(Format=_{0}ms, Selector=it) => #18
        SubscribeSubject Params
        -> MemberSelector(Selector=TurnMode)
        -> Format(Format=_TM{0}, Selector=it) => #21
        #7, #9, #10, #12, #15, #18, #21 -> Zip
        -> Format(Format={0}{1}{2}{3}{4}, Selector="Item1,Item2,Item3,Item4,Item5")
        -> Take(Count=1)
        -> AsyncSubject SessionPath

    GroupWorkflow LogTrack
        SubscribeSubject TrackResult => #0
        SubscribeSubject End => #1
        #0, #1 -> TakeUntil => #2
        SubscribeSubject SessionPath => #3
        StringProperty(Value=_Track_.csv) => #4
        #3, #4 -> Zip
        -> Format(Format={0}{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #7
        #2, #7 -> Bonsai.IO.CsvWriter(FileName=C:\Users\ALBINO\Desktop\Trash\Tests20mms_Track_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)

    GroupWorkflow LogVR
        SubscribeSubject VROutput => #0
        SubscribeSubject End => #1
        #0, #1 -> TakeUntil => #2
        SubscribeSubject SessionPath => #3
        StringProperty(Value=_VR_.csv) => #4
        #3, #4 -> Zip
        -> Format(Format={0}{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #7
        #2, #7 -> Bonsai.IO.CsvWriter(FileName=C:\Users\ALBINO\Desktop\Trash\Tests20mms_VR_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)

    ExternalizedMapping(LowFramerate, HighFramerate)
    -> GroupWorkflow LogVideo
        SubscribeSubject LowResCamera => #0
        SubscribeSubject End => #1
        #0, #1 -> TakeUntil => #2
        SubscribeSubject SessionPath => #3
        StringProperty(Value=_CamL_.avi) => #4
        #3, #4 -> Zip
        -> Format(Format={0}{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(FrameRate(DisplayName=LowFramerate)) => #8
        Source1=#2, Source3=#7, Source3=#8 -> Bonsai.Vision.VideoWriter
          FileName=C:\Users\ALBINO\Desktop\Trash\Tests20mms_CamL_.avi
          Suffix=FileCount
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=85
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=Linear

        SubscribeSubject HighResCamera => #10
        SubscribeSubject End => #11
        #10, #11 -> TakeUntil => #12
        SubscribeSubject SessionPath => #13
        StringProperty(Value=_CamH_.avi) => #14
        #13, #14 -> Zip
        -> Format(Format={0}{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #17
        ExternalizedMapping(FrameRate(DisplayName=HighFramerate)) => #18
        #12, #17, #18 -> Bonsai.Vision.VideoWriter
          FileName=C:\Users\ALBINO\Desktop\Trash\Tests20mms_CamH_.avi
          Suffix=FileCount
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=200
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=Linear

Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=true)
-> WorkflowOutput

SubscribeSubject ElapsedTime
SubscribeSubject HighResCamera

SubscribeSubject TrackResult
-> MemberSelector(Selector=RedLEDDetector)

SubscribeSubject VROutput => #10
-> MemberSelector(Selector=RedLED)
#10 -> MemberSelector(Selector=PhotoValue)
#10 -> MemberSelector(Selector=PhotoLightOff)
#10 -> MemberSelector(Selector=StimState)
#10 -> MemberSelector(Selector=StimEvent)
#10 -> MemberSelector(Selector=StimOccluded)
