WorkflowBuilder(Version=2.7.1)
GroupWorkflow Camera
    ExternalizedMapping(DeviceId(DisplayName=LowResCam), ConfigFile(DisplayName=LowResConfig))
    -> Bonsai.uEye.uEyeCapture(DeviceId=1, ConfigFile=C:\Users\Utilizador\Desktop\ueyeParameters700x700.ini)
    -> MemberSelector(Selector=Image)
    -> PublishSubject LowResCamera

GroupWorkflow "Transformation Matrixes"
    ExternalizedMapping(FileName(DisplayName=PX2MM))
    -> Bonsai.IO.CsvReader(FileName=C:\Users\Utilizador\Desktop\MagnetConversions\PX2MM.txt, ListSeparator="", ScanPattern="%f,%f,%f", SkipRows=0)
    -> SelectMany ForEachLine
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #0 -> MemberSelector(Selector=Item3) => #3
        #1, #2, #3 -> Merge
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> Take(Count=1)
    -> AsyncSubject PX2MM

GroupWorkflow MagnetControl
    Bonsai.IO.CreateSerialPort
      Name=MagnetCOM
      PortName=COM3
      BaudRate=115200
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=false
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=MagnetCOM, NewLine=\n)

StringProperty(Value="G21 G92 X0 Y0")
-> Bonsai.IO.SerialStringWrite(PortName=MagnetCOM, NewLine=\n)
-> StringProperty(Value=SetMagnetHome)
-> CreateObservable GenerateProtocolSequence
    DateTimeProperty(Value=0001-01-01T00:00:00)
    -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
    ExternalizedMapping(Value(DisplayName=Speed3)) => #2
    ExternalizedMapping(Value(DisplayName=Speed2)) => #3
    ExternalizedMapping(Value(DisplayName=Speed1)) => #4
    ExternalizedMapping(Value(DisplayName=TrialCount))
    -> IntProperty(Value=3) => #6
    -> PropertyMapping(Count) => #7
    #6 -> Add(Operand=IntProperty(Value=-1)) => #8
    -> PropertyMapping(Upper) => #9
    #1, #8 -> Zip
    -> MemberSelector(Selector=Item1) => #11
    #11, #9 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=2) => #12
    #12, #7 -> Bonsai.Numerics.Distributions.SampleDistinct(Count=3) => #13
    -> Condition => #14
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    #14, #4 -> FloatProperty(Value=20) => #15
    #13 -> Condition => #16
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    #16, #3 -> FloatProperty(Value=40) => #17
    #13 -> Condition => #18
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    #18, #2 -> FloatProperty(Value=30) => #19
    #15, #17, #19 -> Merge
    -> WorkflowOutput
-> Concat
-> Take(Count=3)
-> CreateObservable Trial
    WorkflowInput Source1
    -> PropertyMapping("Speed (mm/s)") => #1
    ExternalizedMapping("Direction (1 or -1)", RootPath, Date, ProtocolName, RedLED, GreenLED, Framerate, LEDOption, "Duration (sec)", "Radius (mm)") => #2
    #1, #2 -> GroupWorkflow TrialParameters
        ExternalizedMapping(Value(DisplayName="Speed (mm/s)"))
        -> FloatProperty(Value=20) => #1
        ExternalizedMapping(Value(DisplayName="Radius (mm)"))
        -> FloatProperty(Value=25) => #3
        ExternalizedMapping(Value(DisplayName="Direction (1 or -1)"))
        -> FloatProperty(Value=1) => #5
        ExternalizedMapping(Value(DisplayName=RedLED))
        -> BooleanProperty(Value=true) => #7
        ExternalizedMapping(Value(DisplayName=GreenLED))
        -> BooleanProperty(Value=true) => #9
        #7, #9 -> Zip => #10
        ExternalizedMapping(Value(DisplayName=Framerate))
        -> IntProperty(Value=85) => #12
        ExternalizedMapping(Value(DisplayName=LEDOption))
        -> IntProperty(Value=0) => #14
        ExternalizedMapping(Value(DisplayName="Duration (sec)"))
        -> IntProperty(Value=30) => #16
        #1, #3, #5, #12, #14, #16 -> Zip => #17
        #17, #10 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1.Item1 as Speed,
            it.Item1.Item2 as Radius,
            it.Item1.Item3 as Direction,
            it.Item1.Item4 as Framerate,
            it.Item1.Item5 as LEDOption,
            it.Item1.Item6 as TrialDuration,
            it.Item2.Item1 as RedLEDSwitch,
            it.Item2.Item2 as GreenLEDSwitch)
        -> BehaviorSubject Params

        ExternalizedMapping(RootPath, Date, ProtocolName)
        -> GroupWorkflow LogPaths
            ExternalizedMapping(Value(DisplayName=RootPath))
            -> StringProperty(Value=C:\Users\Utilizador\Desktop) => #1
            StringProperty(Value=\) => #2
            #1, #2 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> Take(Count=1)
            -> AsyncSubject RootPath

            ExternalizedMapping(Value(DisplayName=Date))
            -> StringProperty(Value=Trash) => #8
            SubscribeSubject RootPath => #9
            StringProperty(Value=\) => #10
            ExternalizedMapping(Value(DisplayName=ProtocolName))
            -> StringProperty(Value=Circle) => #12
            SubscribeSubject Params
            -> MemberSelector(Selector=Speed)
            -> Format(Format={0}mms, Selector=it) => #15
            #9, #8, #10, #12, #15 -> Zip
            -> Format(Format={0}{1}{2}{3}{4}, Selector="Item1,Item2,Item3,Item4,Item5")
            -> Take(Count=1)
            -> AsyncSubject SessionPath

    GroupWorkflow Tracking
        SubscribeSubject LowResCamera
        -> Timestamp => #1
        -> MemberSelector(Selector=Value) => #2
        -> IntProperty(Value=1)
        -> Accumulate => #4
        #2, #4 -> Zip => #5
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Vision.Grayscale => #7
        -> Bonsai.Vision.CropCenter(Size(Width=310, Height=425), FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #8
        -> Bonsai.Vision.Smooth(SmoothType=Blur, Size1=15, Size2=15, Sigma1=15, Sigma2=15) => #9
        #8 -> MemberSelector(Selector=Size.Width)
        -> Divide(Operand=IntProperty(Value=2))
        -> PropertyMapping(Value) => #12
        #8 -> MemberSelector(Selector=Size.Height)
        -> Divide(Operand=IntProperty(Value=2))
        -> PropertyMapping(Value) => #15
        #8, #9 -> Zip
        -> Subtract
        -> Bonsai.Vision.Threshold(ThresholdValue=16, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=50)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid) => #22
        -> MemberSelector(Selector=X) => #23
        #22 -> MemberSelector(Selector=Y) => #24
        #7 -> Bonsai.Vision.Threshold(ThresholdValue=35, MaxValue=255, ThresholdType=BinaryInv)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=5, MaxArea=500)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion => #28
        -> MemberSelector(Selector=Centroid) => #29
        -> GroupWorkflow ConvertToMm => #30
            SubscribeSubject PX2MM => #0
            WorkflowInput Source1 => #1
            -> MemberSelector(Selector=X) => #2
            #1 -> MemberSelector(Selector=Y) => #3
            #2, #3 -> Zip => #4
            #4, #0 -> WithLatestFrom
            -> UnitTransform
            -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f
              Script:
                import clr
                clr.AddReference("OpenCV.Net")
                from OpenCV.Net import Point2f

                @returns(Point2f)
                def process(value):
                  return Point2f(value.Item1,value.Item2)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Fly)
        -> MemberSelector(Selector=Fly) => #32
        #28 -> Bonsai.Vision.BinaryRegionExtremes(Method=MajorAxis) => #33
        -> MemberSelector(Selector=Item1) => #34
        #33 -> MemberSelector(Selector=Item2) => #35
        #29, #34, #35 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform FindHead => #37
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            # Global Variables
            centroid = Point2f(float(0),float(0))
            head = Point2f(float(0),float(0))
            tail = Point2f(float(0),float(0))
            history = float(0)


            def distancesquare(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return dx * dx + dy * dy

            def angleline(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return math.atan2(dy, dx)

            def cossimilarity(pt1,pt2):
              if (dotproduct(pt1,pt1)*dotproduct(pt2,pt2)) == 0:
                return float(1)
              else:
                return float(dotproduct(pt1,pt2)/(math.sqrt(dotproduct(pt1,pt1))*math.sqrt(dotproduct(pt2,pt2))))

            def dotproduct(pt1,pt2):
              return pt1.X*pt2.X+pt1.Y*pt2.Y

            @returns(Point2f)
            def process(value):
                #Load Global Variables
                global centroid, head, tail, history

                pt1 = value.Item1
                pt2 = value.Item2
                pt3 = value.Item3
                d = distancesquare(centroid,pt1)

                if distancesquare(pt3, head) < distancesquare(pt3, tail):
                  aux = pt2
                  pt2 = pt3
                  pt3 = aux

                dCentroid = pt1 - centroid
                dHead = head - centroid
                if distancesquare(centroid,pt1) > 1:
                  cossim = cossimilarity(dCentroid,dHead)
                  history = history + 0.2*cossim
                else:
                  history = 1

                if history < 0:
                  aux = pt2
                  pt2 = pt3
                  pt3 = aux

                centroid = pt1
                head = pt2
                tail = pt3

                return head
        -> GroupWorkflow ConvertToMm => #38
            SubscribeSubject PX2MM => #0
            WorkflowInput Source1 => #1
            -> MemberSelector(Selector=X) => #2
            #1 -> MemberSelector(Selector=Y) => #3
            #2, #3 -> Zip => #4
            #4, #0 -> WithLatestFrom
            -> UnitTransform
            -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f
              Script:
                import clr
                clr.AddReference("OpenCV.Net")
                from OpenCV.Net import Point2f

                @returns(Point2f)
                def process(value):
                  return Point2f(value.Item1,value.Item2)
            -> WorkflowOutput
        #30, #38 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform CalculateOrientation
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            def angleline(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return math.atan2(dy, dx)

            @returns(float)
            def process(value):
                centroid = value.Item1
                head = value.Item2
                orientation = angleline(centroid,head)
                return float(orientation)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Orientation)
        -> MemberSelector(Selector=Orientation) => #42
        #38 -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Head)
        -> MemberSelector(Selector=Head) => #44
        #7 -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgra) => #45
        #7 -> MemberSelector(Selector=Size.Width)
        -> Divide(Operand=IntProperty(Value=2)) => #47
        #47, #12 -> Subtract(Operand=IntProperty(Value=155))
        -> PropertyMapping(Value) => #49
        #23, #49 -> Add(Operand=FloatProperty(Value=195)) => #50
        #7 -> Bonsai.Vision.MaskPolygon
          Regions(ArrayOfPoint(Point(X=358, Y=72), Point(X=317, Y=72), Point(X=317, Y=49), Point(X=358, Y=49)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Vision.Threshold(ThresholdValue=150, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=150, MaxArea=10000)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Area)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as RedLED)
        -> MemberSelector(Selector=RedLED) => #59
        #7 -> Bonsai.Vision.MaskPolygon
          Regions(ArrayOfPoint(Point(X=483, Y=52), Point(X=522, Y=52), Point(X=522, Y=95), Point(X=483, Y=95)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Vision.Threshold(ThresholdValue=150, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=250, MaxArea=10000)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Area)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as GreenLED)
        -> MemberSelector(Selector=GreenLED) => #68
        #59, #68 -> Zip => #69
        #7 -> MemberSelector(Selector=Size.Height)
        -> Divide(Operand=IntProperty(Value=2)) => #71
        #71, #15 -> Subtract(Operand=IntProperty(Value=212))
        -> PropertyMapping(Value) => #73
        #24, #73 -> Add(Operand=FloatProperty(Value=138)) => #74
        #50, #74 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f => #76
          Script:
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f

            @returns(Point2f)
            def process(value):
              return Point2f(value.Item1,value.Item2)
        -> GroupWorkflow ConvertToMm
            SubscribeSubject PX2MM => #0
            WorkflowInput Source1 => #1
            -> MemberSelector(Selector=X) => #2
            #1 -> MemberSelector(Selector=Y) => #3
            #2, #3 -> Zip => #4
            #4, #0 -> WithLatestFrom
            -> UnitTransform
            -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f
              Script:
                import clr
                clr.AddReference("OpenCV.Net")
                from OpenCV.Net import Point2f

                @returns(Point2f)
                def process(value):
                  return Point2f(value.Item1,value.Item2)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Magnet)
        -> MemberSelector(Selector=Magnet) => #79
        #45, #29, #37, #76 -> Zip
        -> HeadVisualizer
        #5 -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Frame)
        -> MemberSelector(Selector=Frame) => #84
        #4 -> PropertyMapping(Value)
        -> FloatProperty(Value=2570) => #86
        SubscribeSubject Params
        -> MemberSelector(Selector=Framerate)
        -> PropertyMapping(Value) => #89
        #86, #89 -> Divide(Operand=IntProperty(Value=85))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as ElapsedTimeSec)
        -> MemberSelector(Selector=ElapsedTimeSec)
        #1 -> MemberSelector(Selector=Timestamp) => #93
        #84, #32, #44, #42, #79, #69, #93 -> Zip
        -> Timestamp
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Value.Item1 as Frame,
            it.Value.Item2 as Fly,
            it.Value.Item3 as Head,
            it.Value.Item4 as Orientation,
            it.Value.Item5 as Magnet,
            it.Value.Item6.Item1 as RedLED,
            it.Value.Item6.Item2 as GreenLED,
            it.Timestamp as TimeTracking,
            it.Value.Item7 as TimeAcquisition)
        -> BehaviorSubject Fly

    GroupWorkflow Stimuli
        SubscribeSubject Params => #0
        Timer(DueTime=PT0S, Period=PT0.02S) => #1
        SubscribeSubject Fly => #2
        -> Timestamp
        -> GroupWorkflow "Elapsed Time Calculator" => #4
            WorkflowInput Source1
            -> MemberSelector(Selector=Timestamp) => #1
            -> Take(Count=1) => #2
            #1, #2 -> WithLatestFrom
            -> Subtract
            -> MemberSelector(Selector=TotalSeconds)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToFloat
              Expression: Single(it)
            -> WorkflowOutput
        #2 -> MemberSelector(Selector=Frame) => #5
        #2 -> MemberSelector(Selector=Fly.X) => #6
        #2 -> MemberSelector(Selector=Fly.Y) => #7
        #2 -> MemberSelector(Selector=Orientation) => #8
        #4, #5, #6, #7, #8 -> Zip => #9
        #9, #0 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform Protocol => #11
          Script:
            import math
            from System import Tuple

            # Global Variables (Outputs)
            StimX = None                #Stimulus X Coordinate in Millimeters
            StimY = None                #Stimulus Y Coordinate in Millimeters
            StimOri = None              #Stimulus Orientation in Radians
            state = None                #Stimulus State

            # State Legend
            # 99 - Initiation (Close Loop With Fly Center of Mass and Orientation)
            # 0 - Circle Path

            @returns(Tuple[float,float,float,float,float,bool,bool])
            def process(value):
                #Load Global Variables
                global StimX, StimY, StimOri, state

                # Initiate LEDs
                RedLEDSwitch = value.Item2.RedLEDSwitch
                GreenLEDSwitch = value.Item2.GreenLEDSwitch
                RedLED = bool(False)
                GreenLED = bool(False)

                # Close Loop Input
                FlyX = float(0) #value.Item1.Item3      #Tracked Fly X Coordinate in Millimeters
                FlyY = float(0) #value.Item1.Item4      #Tracked Fly Y Coordinate in Millimeters
                FlyOri = float(0) #value.Item1.Item5    #Tracked Fly Orientation in Radians

                # Open Loop Input
                t = value.Item1.Item1         #Elapsed time since the start of the experiment
                frame=value.Item1.Item2       #Current Frame from current section
                option = value.Item2.LEDOption #Protocol Option for LED (see start)
                fr = value.Item2.Framerate    #framerate of the camera
                duration = value.Item2.TrialDuration #In seconds

                # Protocol Specific Inputs
                speed=value.Item2.Speed       #Stimulus speed in Millimeters/Second
                r=value.Item2.Radius      #Radius of the curved section
                sign=value.Item2.Direction    #Global direction (changes the entire protocol direction to the mirror image)

                # General Variables
                dt = 0.011765
                dd = speed*dt                 #Amount of distance traveled by the stimulus in between projection frames
                d = dd/2                      #half tangent(distance travelled) for angle calculation
                dtheta = sign*2*math.asin(d/r)    #angle in the circle to move in each step

                # Protocol Algorithm -------------------------------
                if (t < 5):
                  StimX = 0
                  StimY = 0
                  StimOri = 0
                  state = 99
                elif (t > 5 and t < 6):
                  StimX = r
                  StimY = 0
                  StimOri = 0
                  state = 99
                else:
                  state = 0
                  PrevX = StimX             #Saves Previous X value for the stimulus
                  PrevY = StimY             #Saves Previous Y value for the stimulus
                  theta = math.atan2(StimY,StimX)
                  StimX = r*math.cos(theta+dtheta)
                  StimY = r*math.sin(theta+dtheta)
                  StimOri = math.atan2(StimY-PrevY, StimX-PrevX)

                  # LED Control
                  if (RedLEDSwitch):
                    RedLED = bool(True);
                  if (GreenLEDSwitch):
                    if(option==1):
                      halfn = l/(2*dd)
                      halfk = k/2
                      time1 = fr*(duration/3)
                      time2 = fr*(duration*2/3)
                      if(state==0 and n<halfn and frame>time1 and frame<time2):
                        GreenLED = bool(True);
                      if(abs(state)==1 and m>halfk and frame>time2):
                        GreenLED = bool(True);
                    if(option==2):
                      time1 = fr*(duration/2)
                      if(state==0 and frame>time1):
                        GreenLED = bool(True);
                    if(option==0):
                      time1 = fr*(1/3)
                      if(frame>time1):
                        GreenLED = bool(True);
                return Tuple.Create(float(value.Item1.Item2),float(StimX),float(StimY),float(StimOri),float(state),RedLED,GreenLED)
        #1, #11 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1 as LowResFrame,
            it.Item2 as X,
            it.Item3 as Y,
            it.Item4 as Orientation,
            it.Item5 as State,
            it.Item6 as RedLED,
            it.Item7 as GreenLED)
        -> BehaviorSubject Stim

    GroupWorkflow Command
        SubscribeSubject Stim => #0
        -> MemberSelector(Selector=X) => #1
        #0 -> MemberSelector(Selector=Y) => #2
        #1, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform BuildMoveCommand
          Expression: "G21 G53 X" + Item1.ToString() + " Y" + Item2.ToString()
        -> Bonsai.IO.SerialStringWrite(PortName=MagnetCOM, NewLine=\n) => #5
        #5, #0 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Timestamp
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Value.LowResFrame as LowResFrame,
            it.Value.X as X,
            it.Value.Y as Y,
            it.Value.Orientation as Orientation,
            it.Value.State as State,
            it.Timestamp as TimeProjection)
        -> BehaviorSubject Command
        #0 -> MemberSelector(Selector=RedLED)
        -> PublishSubject RedLED
        #0 -> MemberSelector(Selector=GreenLED)
        -> PublishSubject GreenLED

    GroupWorkflow Logging
        GroupWorkflow LogFly
            StringProperty(Value=_Fly_.csv) => #0
            SubscribeSubject SessionPath => #1
            #1, #0 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> PropertyMapping(FileName) => #4
            SubscribeSubject Fly => #5
            #4, #5 -> Bonsai.IO.CsvWriter(FileName=C:\Users\Utilizador\Desktop\Trash\Circle20mms_Fly_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)

        GroupWorkflow LogStim
            StringProperty(Value=_Stim_.csv) => #0
            SubscribeSubject SessionPath => #1
            #1, #0 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> PropertyMapping(FileName) => #4
            SubscribeSubject Command => #5
            #4, #5 -> Bonsai.IO.CsvWriter(FileName=C:\Users\Utilizador\Desktop\Trash\Circle20mms_Stim_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)

        GroupWorkflow LogVideo
            SubscribeSubject LowResCamera => #0
            StringProperty(Value=_CamL_.avi) => #1
            SubscribeSubject SessionPath => #2
            #2, #1 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> PropertyMapping(FileName) => #5
            Source1=#0, Source3=#5 -> Bonsai.Vision.VideoWriter
              FileName=C:\Users\Utilizador\Desktop\Trash\Circle20mms_CamL_.avi
              Suffix=FileCount
              Buffered=true
              Overwrite=false
              FourCC=FMP4
              FrameRate=85
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=Linear

    GroupWorkflow LEDArduino
        SubscribeSubject RedLED => #0
        IntProperty(Value=1) => #1
        IntProperty(Value=0) => #2
        #1, #2 -> Zip => #3
        #0, #3 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform Protocol
          Script:
            import math
            from System import Tuple

            # Global Variables (Outputs)
            counter = None
            outOpt = None#
            option = None

            @returns(bool)
            def process(value):

                #Load Global Variables
                global counter, outOpt, option

                defOpt = value.Item1
                on = value.Item2.Item1
                off = value.Item2.Item2

                if off>0:
                  if counter is None:
                    outOpt = defOpt
                    counter = on
                    option = 1
                  else:
                    if (option == 1 and counter == 0):
                      outOpt = bool(False)
                      counter = off
                      option = 0
                    elif (option == 0 and counter == 0):
                      outOpt = defOpt
                      counter = on
                      option = 1
                  counter -= 1
                  if counter < 0:
                    counter = 0
                  return outOpt
                else:
                  return defOpt
        -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=2)

        SubscribeSubject GreenLED => #7
        IntProperty(Value=1) => #8
        IntProperty(Value=8) => #9
        #8, #9 -> Zip => #10
        #7, #10 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform Protocol
          Script:
            import math
            from System import Tuple

            # Global Variables (Outputs)
            counter = None
            outOpt = None#
            option = None

            @returns(bool)
            def process(value):

                #Load Global Variables
                global counter, outOpt, option

                defOpt = value.Item1
                on = value.Item2.Item1
                off = value.Item2.Item2

                if counter is None:
                  outOpt = defOpt
                  counter = on
                  option = 1
                else:
                  if (option == 1 and counter == 0):
                    outOpt = bool(False)
                    counter = off
                    option = 0
                  elif (option == 0 and counter == 0):
                    outOpt = defOpt
                    counter = on
                    option = 1
                counter -= 1
                if counter < 0:
                  counter = 0
                return outOpt
        -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=8)

    GroupWorkflow CloseTrial
        Timer(DueTime=PT0S, Period=PT1S) => #0
        SubscribeSubject Params
        -> MemberSelector(Selector=TrialDuration)
        -> PropertyMapping(Count) => #3
        #0, #3 -> Skip(Count=30)
        -> Take(Count=1)
        -> WorkflowOutput
    -> WorkflowOutput
-> Concat
-> Delay(DueTime=PT2S)
-> Skip(Count=2)
-> StringProperty(Value="G21 G53 X0 Y0")
-> Bonsai.IO.SerialStringWrite(PortName=MagnetCOM, NewLine=\n) => #14
-> StringProperty(Value=ReturnMagnetHome)
-> WorkflowOutput
#14 -> BooleanProperty(Value=false)
-> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=2)
#14 -> BooleanProperty(Value=false)
-> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=8)
