WorkflowBuilder(Version=2.7.1)
GroupWorkflow Camera
    ExternalizedMapping(DeviceId(DisplayName=LowResCam), ConfigFile(DisplayName=LowResConfig))
    -> Bonsai.uEye.uEyeCapture(DeviceId=1, ConfigFile=C:\Users\Utilizador\Desktop\ueyeParameters700x700.ini)
    -> MemberSelector(Selector=Image)
    -> PublishSubject LowResCamera

GroupWorkflow "Transformation Matrixes"
    ExternalizedMapping(FileName(DisplayName=PX2MM))
    -> Bonsai.IO.CsvReader(FileName=C:\Users\Utilizador\Desktop\MagnetConversions\PX2MM.txt, ListSeparator="", ScanPattern="%f,%f,%f", SkipRows=0)
    -> SelectMany ForEachLine
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2) => #2
        #0 -> MemberSelector(Selector=Item3) => #3
        #1, #2, #3 -> Merge
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> Take(Count=1)
    -> AsyncSubject PX2MM

GroupWorkflow MagnetControl
    Bonsai.IO.CreateSerialPort
      Name=MagnetCOM
      PortName=COM3
      BaudRate=115200
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=false
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=MagnetCOM, NewLine=\n)

StringProperty(Value="G21 G92 X0 Y0")
-> Bonsai.IO.SerialStringWrite(PortName=MagnetCOM, NewLine=\n)
-> StringProperty(Value=SetMagnetHome)
-> CreateObservable GenerateProtocolSequence
    DateTimeProperty(Value=0001-01-01T00:00:00)
    -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
    ExternalizedMapping(Value(DisplayName=Speed3)) => #2
    ExternalizedMapping(Value(DisplayName=Speed2)) => #3
    ExternalizedMapping(Value(DisplayName=Speed1)) => #4
    ExternalizedMapping(Value(DisplayName=TrialCount))
    -> IntProperty(Value=1) => #6
    -> PropertyMapping(Count) => #7
    #6 -> Add(Operand=IntProperty(Value=-1)) => #8
    -> PropertyMapping(Upper) => #9
    #1, #8 -> Zip
    -> MemberSelector(Selector=Item1) => #11
    #11, #9 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0) => #12
    #12, #7 -> Bonsai.Numerics.Distributions.SampleDistinct(Count=1) => #13
    -> Condition => #14
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    #14, #4 -> FloatProperty(Value=20) => #15
    #13 -> Condition => #16
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    #16, #3 -> FloatProperty(Value=30) => #17
    #13 -> Condition => #18
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    #18, #2 -> FloatProperty(Value=10) => #19
    #15, #17, #19 -> Merge
    -> WorkflowOutput
-> Concat
-> Take(Count=1)
-> CreateObservable Trial
    WorkflowInput Source1
    -> PropertyMapping("Speed (mm/s)") => #1
    ExternalizedMapping(NumberOfLoops, "Length (mm)", "Direction (1 or -1)", RootPath, Date, ProtocolName, RedLED, GreenLED, Framerate, LEDOption, "Duration (sec)") => #2
    #1, #2 -> GroupWorkflow TrialParameters
        ExternalizedMapping(Value(DisplayName="Speed (mm/s)"))
        -> FloatProperty(Value=20) => #1
        ExternalizedMapping(Value(DisplayName=NumberOfLoops))
        -> FloatProperty(Value=4) => #3
        ExternalizedMapping(Value(DisplayName="Length (mm)"))
        -> FloatProperty(Value=50) => #5
        ExternalizedMapping(Value(DisplayName="Direction (1 or -1)"))
        -> FloatProperty(Value=1) => #7
        ExternalizedMapping(Value(DisplayName=RedLED))
        -> BooleanProperty(Value=true) => #9
        ExternalizedMapping(Value(DisplayName=GreenLED))
        -> BooleanProperty(Value=false) => #11
        #9, #11 -> Zip => #12
        ExternalizedMapping(Value(DisplayName=Framerate))
        -> IntProperty(Value=85) => #14
        ExternalizedMapping(Value(DisplayName=LEDOption))
        -> IntProperty(Value=0) => #16
        ExternalizedMapping(Value(DisplayName="Duration (sec)"))
        -> IntProperty(Value=300) => #18
        #1, #3, #5, #7, #14, #16, #18 -> Zip => #19
        #19, #12 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1.Item1 as Speed,
            it.Item1.Item2 as NumberOfLoops,
            it.Item1.Item3 as Length,
            it.Item1.Item4 as Direction,
            it.Item1.Item5 as Framerate,
            it.Item1.Item6 as LEDOption,
            it.Item1.Item7 as TrialDuration,
            it.Item2.Item1 as RedLEDSwitch,
            it.Item2.Item2 as GreenLEDSwitch)
        -> BehaviorSubject Params

        ExternalizedMapping(RootPath, Date, ProtocolName)
        -> GroupWorkflow LogPaths
            ExternalizedMapping(Value(DisplayName=RootPath))
            -> StringProperty(Value=C:\Users\Utilizador\Desktop) => #1
            StringProperty(Value=\) => #2
            #1, #2 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> Take(Count=1)
            -> AsyncSubject RootPath

            ExternalizedMapping(Value(DisplayName=Date))
            -> StringProperty(Value=20260611S) => #8
            SubscribeSubject RootPath => #9
            StringProperty(Value=\) => #10
            ExternalizedMapping(Value(DisplayName=ProtocolName))
            -> StringProperty(Value=Sinusoid) => #12
            SubscribeSubject Params
            -> MemberSelector(Selector=Speed)
            -> Format(Format={0}mms, Selector=it) => #15
            #9, #8, #10, #12, #15 -> Zip
            -> Format(Format={0}{1}{2}{3}{4}, Selector="Item1,Item2,Item3,Item4,Item5")
            -> Take(Count=1)
            -> AsyncSubject SessionPath

    GroupWorkflow Tracking
        SubscribeSubject LowResCamera
        -> Timestamp => #1
        -> MemberSelector(Selector=Value) => #2
        -> IntProperty(Value=1)
        -> Accumulate => #4
        #2, #4 -> Zip => #5
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Vision.Grayscale => #7
        -> Bonsai.Vision.CropCenter(Size(Width=310, Height=425), FillValue(Val0=0, Val1=0, Val2=0, Val3=0)) => #8
        -> Bonsai.Vision.Smooth(SmoothType=Blur, Size1=15, Size2=15, Sigma1=15, Sigma2=15) => #9
        #8 -> MemberSelector(Selector=Size.Width)
        -> Divide(Operand=IntProperty(Value=2))
        -> PropertyMapping(Value) => #12
        #8 -> MemberSelector(Selector=Size.Height)
        -> Divide(Operand=IntProperty(Value=2))
        -> PropertyMapping(Value) => #15
        #8, #9 -> Zip
        -> Subtract
        -> Bonsai.Vision.Threshold(ThresholdValue=16, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=50)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid) => #22
        -> MemberSelector(Selector=X) => #23
        #22 -> MemberSelector(Selector=Y) => #24
        #7 -> Bonsai.Vision.Threshold(ThresholdValue=35, MaxValue=255, ThresholdType=BinaryInv)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=5, MaxArea=500)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion => #28
        -> MemberSelector(Selector=Centroid) => #29
        -> GroupWorkflow ConvertToMm => #30
            SubscribeSubject PX2MM => #0
            WorkflowInput Source1 => #1
            -> MemberSelector(Selector=X) => #2
            #1 -> MemberSelector(Selector=Y) => #3
            #2, #3 -> Zip => #4
            #4, #0 -> WithLatestFrom
            -> UnitTransform
            -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f
              Script:
                import clr
                clr.AddReference("OpenCV.Net")
                from OpenCV.Net import Point2f

                @returns(Point2f)
                def process(value):
                  return Point2f(value.Item1,value.Item2)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Fly)
        -> MemberSelector(Selector=Fly) => #32
        #28 -> Bonsai.Vision.BinaryRegionExtremes(Method=MajorAxis) => #33
        -> MemberSelector(Selector=Item1) => #34
        #33 -> MemberSelector(Selector=Item2) => #35
        #29, #34, #35 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform FindHead => #37
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            # Global Variables
            centroid = Point2f(float(0),float(0))
            head = Point2f(float(0),float(0))
            tail = Point2f(float(0),float(0))
            history = float(0)


            def distancesquare(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return dx * dx + dy * dy

            def angleline(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return math.atan2(dy, dx)

            def cossimilarity(pt1,pt2):
              if (dotproduct(pt1,pt1)*dotproduct(pt2,pt2)) == 0:
                return float(1)
              else:
                return float(dotproduct(pt1,pt2)/(math.sqrt(dotproduct(pt1,pt1))*math.sqrt(dotproduct(pt2,pt2))))

            def dotproduct(pt1,pt2):
              return pt1.X*pt2.X+pt1.Y*pt2.Y

            @returns(Point2f)
            def process(value):
                #Load Global Variables
                global centroid, head, tail, history

                pt1 = value.Item1
                pt2 = value.Item2
                pt3 = value.Item3
                d = distancesquare(centroid,pt1)

                if distancesquare(pt3, head) < distancesquare(pt3, tail):
                  aux = pt2
                  pt2 = pt3
                  pt3 = aux

                dCentroid = pt1 - centroid
                dHead = head - centroid
                if distancesquare(centroid,pt1) > 1:
                  cossim = cossimilarity(dCentroid,dHead)
                  history = history + 0.2*cossim
                else:
                  history = 1

                if history < 0:
                  aux = pt2
                  pt2 = pt3
                  pt3 = aux

                centroid = pt1
                head = pt2
                tail = pt3

                return head
        -> GroupWorkflow ConvertToMm => #38
            SubscribeSubject PX2MM => #0
            WorkflowInput Source1 => #1
            -> MemberSelector(Selector=X) => #2
            #1 -> MemberSelector(Selector=Y) => #3
            #2, #3 -> Zip => #4
            #4, #0 -> WithLatestFrom
            -> UnitTransform
            -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f
              Script:
                import clr
                clr.AddReference("OpenCV.Net")
                from OpenCV.Net import Point2f

                @returns(Point2f)
                def process(value):
                  return Point2f(value.Item1,value.Item2)
            -> WorkflowOutput
        #30, #38 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform CalculateOrientation
          Script:
            import math
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f
            from System import Single, Tuple

            def angleline(pt1,pt2):
              dx = (pt2.X - pt1.X)
              dy = (pt2.Y - pt1.Y)
              return math.atan2(dy, dx)

            @returns(float)
            def process(value):
                centroid = value.Item1
                head = value.Item2
                orientation = angleline(centroid,head)
                return float(orientation)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Orientation)
        -> MemberSelector(Selector=Orientation) => #42
        #38 -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Head)
        -> MemberSelector(Selector=Head) => #44
        #7 -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgra) => #45
        #7 -> MemberSelector(Selector=Size.Width)
        -> Divide(Operand=IntProperty(Value=2)) => #47
        #47, #12 -> Subtract(Operand=IntProperty(Value=155))
        -> PropertyMapping(Value) => #49
        #23, #49 -> Add(Operand=FloatProperty(Value=195)) => #50
        #7 -> Bonsai.Vision.MaskPolygon
          Regions(ArrayOfPoint(Point(X=358, Y=72), Point(X=317, Y=72), Point(X=317, Y=49), Point(X=358, Y=49)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Vision.Threshold(ThresholdValue=150, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=150, MaxArea=10000)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Area)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as RedLED)
        -> MemberSelector(Selector=RedLED) => #59
        #7 -> Bonsai.Vision.MaskPolygon
          Regions(ArrayOfPoint(Point(X=483, Y=52), Point(X=522, Y=52), Point(X=522, Y=95), Point(X=483, Y=95)))
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Vision.Threshold(ThresholdValue=150, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=250, MaxArea=10000)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Area)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as GreenLED)
        -> MemberSelector(Selector=GreenLED) => #68
        #59, #68 -> Zip => #69
        #7 -> MemberSelector(Selector=Size.Height)
        -> Divide(Operand=IntProperty(Value=2)) => #71
        #71, #15 -> Subtract(Operand=IntProperty(Value=212))
        -> PropertyMapping(Value) => #73
        #24, #73 -> Add(Operand=FloatProperty(Value=138)) => #74
        #50, #74 -> Zip
        -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f => #76
          Script:
            import clr
            clr.AddReference("OpenCV.Net")
            from OpenCV.Net import Point2f

            @returns(Point2f)
            def process(value):
              return Point2f(value.Item1,value.Item2)
        -> GroupWorkflow ConvertToMm
            SubscribeSubject PX2MM => #0
            WorkflowInput Source1 => #1
            -> MemberSelector(Selector=X) => #2
            #1 -> MemberSelector(Selector=Y) => #3
            #2, #3 -> Zip => #4
            #4, #0 -> WithLatestFrom
            -> UnitTransform
            -> Bonsai.Scripting.IronPython.PythonTransform ConvertToPoint2f
              Script:
                import clr
                clr.AddReference("OpenCV.Net")
                from OpenCV.Net import Point2f

                @returns(Point2f)
                def process(value):
                  return Point2f(value.Item1,value.Item2)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Magnet)
        -> MemberSelector(Selector=Magnet) => #79
        #45, #29, #37, #76 -> Zip
        -> HeadVisualizer
        #5 -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as Frame)
        -> MemberSelector(Selector=Frame) => #84
        #4 -> PropertyMapping(Value)
        -> FloatProperty(Value=2552) => #86
        SubscribeSubject Params
        -> MemberSelector(Selector=Framerate)
        -> PropertyMapping(Value) => #89
        #86, #89 -> Divide(Operand=IntProperty(Value=85))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it as ElapsedTimeSec)
        -> MemberSelector(Selector=ElapsedTimeSec)
        #1 -> MemberSelector(Selector=Timestamp) => #93
        #84, #32, #44, #42, #79, #69, #93 -> Zip
        -> Timestamp
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Value.Item1 as Frame,
            it.Value.Item2 as Fly,
            it.Value.Item3 as Head,
            it.Value.Item4 as Orientation,
            it.Value.Item5 as Magnet,
            it.Value.Item6.Item1 as RedLED,
            it.Value.Item6.Item2 as GreenLED,
            it.Timestamp as TimeTracking,
            it.Value.Item7 as TimeAcquisition)
        -> BehaviorSubject Fly

    GroupWorkflow Stimuli
        SubscribeSubject Params => #0
        Timer(DueTime=PT0S, Period=PT0.02S) => #1
        SubscribeSubject Fly => #2
        -> Timestamp
        -> GroupWorkflow "Elapsed Time Calculator" => #4
            WorkflowInput Source1
            -> MemberSelector(Selector=Timestamp) => #1
            -> Take(Count=1) => #2
            #1, #2 -> WithLatestFrom
            -> Subtract
            -> MemberSelector(Selector=TotalSeconds)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToFloat
              Expression: Single(it)
            -> WorkflowOutput
        #2 -> MemberSelector(Selector=Frame) => #5
        #2 -> MemberSelector(Selector=Fly.X) => #6
        #2 -> MemberSelector(Selector=Fly.Y) => #7
        #2 -> MemberSelector(Selector=Orientation) => #8
        #4, #5, #6, #7, #8 -> Zip => #9
        #9, #0 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform "Protocol Sinusoid" => #11
          Script:
            import math
            from System import Tuple

            # ==========================================
            # 1. FIXED PROTOCOL CONFIGURATION
            # ==========================================
            # Note: speed, length, turn radius, and direction are pulled dynamically from 'value'
            DT = 0.011765        # Fixed time interval between frames (seconds)

            # ==========================================
            # 2. DERIVED PROTOCOL CONSTANTS
            # ==========================================
            # Note: These are calculated dynamically inside the process function
            # based on the inputs provided by the 'value' tuple per frame.

            # ==========================================
            # 3. GENERIC OUTPUT VARIABLES
            # ==========================================
            # These variables represent the physical state of the stimulus.
            # They are passed to the rendering engine regardless of what protocol is running.
            StimX = None        # Stimulus X Coordinate (mm)
            StimY = None        # Stimulus Y Coordinate (mm)
            StimOri = None      # Stimulus Orientation (Radians)
            state = None        # Stimulus State (99 = Initialization, 1 = Active Protocol)
            RedLED = False       # Red LED State
            GreenLED = False     # Green LED State

            # ==========================================
            # 4. PROTOCOL-SPECIFIC STATE VARIABLES
            # ==========================================
            # These variables exclusively track the internal logic of the sinusoid loop pattern.
            steps_taken = None              # Frames elapsed in the current loop
            angular_dir = None              # Current rotational direction (1 = CCW, -1 = CW)
            loop_id = None                  # Tracks which loop segment we are currently drawing
            center_x = None                 # X coordinate of the current loop's center
            center_y = None                 # Y coordinate of the current loop's center
            center_shift_dir = -1           # Direction to shift the center when moving to next loop
            target_steps = None             # Dynamically calculated frame target to finish current loop


            @returns(Tuple[float, float, float, float, float, bool, bool])
            def process(value):
                # Declare usage of global generic outputs and protocol specific variables
                global StimX, StimY, StimOri, state, RedLED, GreenLED
                global steps_taken, angular_dir, loop_id, center_x, center_y, center_shift_dir, target_steps

                # ---------------------------------------------------------
                # PARSE INPUTS
                # ---------------------------------------------------------
                # Open Loop Input
                t = value.Item1.Item1                # Elapsed time since the start of the experiment
                frame = value.Item1.Item2            # Current Frame from current section

                # Protocol Specific Inputs
                SPEED = value.Item2.Speed        # Target speed of the stimulus in mm/s
                LENGTH = value.Item2.Length       # Total length of the straight arena section (mm)
                SIGN = value.Item2.Direction            # Global direction multiplier (1 for normal, -1 for mirrored)
                NUM_LOOPS = value.Item2.NumberOfLoops       # Number of half-loops to perform

                # LED & Hardware Inputs
                RedLEDSwitch = value.Item2.RedLEDSwitch
                GreenLEDSwitch = value.Item2.GreenLEDSwitch
                option = value.Item2.LEDOption       # Protocol Option for LED
                fr = value.Item2.Framerate           # Framerate of the camera
                duration = value.Item2.TrialDuration # In seconds

                # Reset LEDs
                RedLED = bool(False)
                GreenLED = bool(False)

                # ==========================================
                # DERIVED PROTOCOL CONSTANTS
                # ==========================================
                R = LENGTH / (2 * NUM_LOOPS)        # Radius of each loop (mm)
                DIST_PER_STEP = SPEED * DT          # Arc length traveled per frame (mm)
                HALF_L = LENGTH / 2.0               # Half of the arena length (mm)
                HALF_C = math.pi * R                # Perimeter of a half-circle loop (mm)
                BASE_STEPS = HALF_C / DIST_PER_STEP # Base number of frames to complete a half-loop
                ANGLE_PER_STEP = DIST_PER_STEP / R  # Angular distance traveled per frame (Radians)

                # ---------------------------------------------------------
                # PHASE 1: Initialization & Waiting Period (t < 5 second)
                # ---------------------------------------------------------
                if t < 5 or StimX is None:
                    # Set generic outputs to starting positions
                    StimX = -1 * HALF_L
                    StimY = 0.0
                    StimOri = 0.0
                    state = 99

                    # Initialize protocol-specific state
                    steps_taken = 0
                    angular_dir = SIGN
                    target_steps = BASE_STEPS     # Start with the default step count
                    debug_step_dist = 0.0         # Visualization output placeholder

                # ---------------------------------------------------------
                # PHASE 2: Protocol Execution Loop (t >= 5 second)
                # ---------------------------------------------------------
                else:
                    # Store previous positions for kinematic calculations
                    PrevX, PrevY = StimX, StimY

                    # Initialize the center of the first loop on the first execution frame
                    if center_x is None:
                        center_x = -(NUM_LOOPS - 1) * HALF_L / NUM_LOOPS
                        center_y = 0.0

                    # Find exact current angle relative to the active circle's center
                    current_angle = math.atan2(PrevY - center_y, PrevX - center_x)

                    # --- LOOP TRANSITION LOGIC ---
                    # Triggered when we have taken enough steps to complete the current loop segment
                    if steps_taken > target_steps - 1:
                        angular_dir = -angular_dir
                        steps_taken = 0

                        # 1. Update Loop ID and center progression direction
                        if loop_id == NUM_LOOPS - 1 or loop_id is None:
                            loop_id = 1
                            center_shift_dir = -center_shift_dir
                        else:
                            loop_id += 1

                        # 2. Shift the center coordinates physically forward/backward
                        center_x += 2 * R * center_shift_dir

                        # 3. Recalculate true angle relative to the NEW center (Prevents teleporting)
                        current_angle = math.atan2(PrevY - center_y, PrevX - center_x)

                        # 4. Dynamically adjust required steps to account for discrete frame remainder
                        is_near_zero = abs(current_angle) < math.pi / 2
                        is_full_loop = (loop_id == NUM_LOOPS - 1)

                        # Determine target exit angle (0 or pi)
                        if is_near_zero:
                            target_angle = 0.0 if is_full_loop else math.pi
                        else:
                            target_angle = math.pi if is_full_loop else 0.0

                        # Calculate remaining angular distance (Modulo 2*pi handles wrapping)
                        dist_to_travel = ((target_angle - current_angle) * angular_dir) % (2 * math.pi)

                        # Force full circle if targeting the same side
                        if is_full_loop and dist_to_travel < math.pi:
                            dist_to_travel += 2 * math.pi

                        # Update loop target steps based on the exact distance needed
                        target_steps = dist_to_travel / ANGLE_PER_STEP

                    # --- MOVEMENT EXECUTION ---
                    # Calculate next position along the circumference
                    StimX = math.cos(angular_dir * ANGLE_PER_STEP + current_angle) * R + center_x
                    StimY = math.sin(angular_dir * ANGLE_PER_STEP + current_angle) * R + center_y

                    # Update generic outputs
                    StimOri = math.atan2(StimY - PrevY, StimX - PrevX)
                    state = 1
                    steps_taken += 1

                # ---------------------------------------------------------
                # PHASE 3: LED Control Logic
                # ---------------------------------------------------------
                if RedLEDSwitch:
                    RedLED = bool(True)

                if GreenLEDSwitch:
                    if option == 1:
                        halfn = l / (2 * dd)
                        halfk = k / 2.0
                        time1 = fr * (duration / 3.0)
                        time2 = fr * (duration * 2.0 / 3.0)

                        if state == 0 and n < halfn and time1 < frame < time2:
                            GreenLED = bool(True)
                        if abs(state) == 1 and m > halfk and frame > time2:  # Note: 'm' is undefined globally
                            GreenLED = bool(True)

                    elif option == 2:
                        time1 = fr * (duration / 2.0)
                        if state == 0 and frame > time1:
                            GreenLED = bool(True)

                    elif option == 0:
                        time1 = fr * (1.0 / 3.0)
                        if frame > time1:
                            GreenLED = bool(True)

                return Tuple.Create(float(frame), float(StimX), float(StimY), float(StimOri), float(state), RedLED, GreenLED)
        #1, #11 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Item1 as LowResFrame,
            it.Item2 as X,
            it.Item3 as Y,
            it.Item4 as Orientation,
            it.Item5 as State,
            it.Item6 as RedLED,
            it.Item7 as GreenLED)
        -> BehaviorSubject Stim

    GroupWorkflow Command
        SubscribeSubject Stim => #0
        -> MemberSelector(Selector=X) => #1
        #0 -> MemberSelector(Selector=Y) => #2
        #1, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform BuildMoveCommand
          Expression: "G21 G53 X" + Item1.ToString() + " Y" + Item2.ToString()
        -> Bonsai.IO.SerialStringWrite(PortName=MagnetCOM, NewLine=\n) => #5
        #5, #0 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Timestamp
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Rename Var"
          Expression:
            New(
            it.Value.LowResFrame as LowResFrame,
            it.Value.X as X,
            it.Value.Y as Y,
            it.Value.Orientation as Orientation,
            it.Value.State as State,
            it.Timestamp as TimeProjection)
        -> BehaviorSubject Command
        #0 -> MemberSelector(Selector=RedLED)
        -> PublishSubject RedLED
        #0 -> MemberSelector(Selector=GreenLED)
        -> PublishSubject GreenLED

    GroupWorkflow Logging
        GroupWorkflow LogFly
            StringProperty(Value=_Fly_.csv) => #0
            SubscribeSubject SessionPath => #1
            #1, #0 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> PropertyMapping(FileName) => #4
            SubscribeSubject Fly => #5
            #4, #5 -> Bonsai.IO.CsvWriter(FileName=C:\Users\Utilizador\Desktop\Trash\Sinusoid20mms_Fly_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)

        GroupWorkflow LogStim
            StringProperty(Value=_Stim_.csv) => #0
            SubscribeSubject SessionPath => #1
            #1, #0 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> PropertyMapping(FileName) => #4
            SubscribeSubject Command => #5
            #4, #5 -> Bonsai.IO.CsvWriter(FileName=C:\Users\Utilizador\Desktop\Trash\Sinusoid20mms_Stim_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=true)

        GroupWorkflow LogVideo
            SubscribeSubject LowResCamera => #0
            StringProperty(Value=_CamL_.avi) => #1
            SubscribeSubject SessionPath => #2
            #2, #1 -> Zip
            -> Format(Format={0}{1}, Selector="Item1,Item2")
            -> PropertyMapping(FileName) => #5
            Source1=#0, Source3=#5 -> Bonsai.Vision.VideoWriter
              FileName=C:\Users\Utilizador\Desktop\Trash\Sinusoid20mms_CamL_.avi
              Suffix=FileCount
              Buffered=true
              Overwrite=false
              FourCC=FMP4
              FrameRate=85
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=Linear

    GroupWorkflow LEDArduino
        SubscribeSubject RedLED => #0
        IntProperty(Value=1) => #1
        IntProperty(Value=0) => #2
        #1, #2 -> Zip => #3
        #0, #3 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform Protocol
          Script:
            import math
            from System import Tuple

            # Global Variables (Outputs)
            counter = None
            outOpt = None#
            option = None

            @returns(bool)
            def process(value):

                #Load Global Variables
                global counter, outOpt, option

                defOpt = value.Item1
                on = value.Item2.Item1
                off = value.Item2.Item2

                if off>0:
                  if counter is None:
                    outOpt = defOpt
                    counter = on
                    option = 1
                  else:
                    if (option == 1 and counter == 0):
                      outOpt = bool(False)
                      counter = off
                      option = 0
                    elif (option == 0 and counter == 0):
                      outOpt = defOpt
                      counter = on
                      option = 1
                  counter -= 1
                  if counter < 0:
                    counter = 0
                  return outOpt
                else:
                  return defOpt
        -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=2)

        SubscribeSubject GreenLED => #7
        IntProperty(Value=1) => #8
        IntProperty(Value=8) => #9
        #8, #9 -> Zip => #10
        #7, #10 -> WithLatestFrom
        -> Bonsai.Scripting.IronPython.PythonTransform Protocol
          Script:
            import math
            from System import Tuple

            # Global Variables (Outputs)
            counter = None
            outOpt = None#
            option = None

            @returns(bool)
            def process(value):

                #Load Global Variables
                global counter, outOpt, option

                defOpt = value.Item1
                on = value.Item2.Item1
                off = value.Item2.Item2

                if counter is None:
                  outOpt = defOpt
                  counter = on
                  option = 1
                else:
                  if (option == 1 and counter == 0):
                    outOpt = bool(False)
                    counter = off
                    option = 0
                  elif (option == 0 and counter == 0):
                    outOpt = defOpt
                    counter = on
                    option = 1
                counter -= 1
                if counter < 0:
                  counter = 0
                return outOpt
        -> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=8)

    GroupWorkflow CloseTrial
        Timer(DueTime=PT0S, Period=PT1S) => #0
        SubscribeSubject Params
        -> MemberSelector(Selector=TrialDuration)
        -> PropertyMapping(Count) => #3
        #0, #3 -> Skip(Count=30)
        -> Take(Count=1)
        -> WorkflowOutput
    -> WorkflowOutput
-> Concat
-> Delay(DueTime=PT2S)
-> Skip(Count=0)
-> StringProperty(Value="G21 G53 X0 Y0")
-> Bonsai.IO.SerialStringWrite(PortName=MagnetCOM, NewLine=\n) => #14
-> StringProperty(Value=ReturnMagnetHome)
-> WorkflowOutput
#14 -> BooleanProperty(Value=false)
-> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=2)
#14 -> BooleanProperty(Value=false)
-> Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=8)
