<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.uEye;assembly=Bonsai.uEye"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:pal="clr-namespace:Bonsai.PulsePal;assembly=Bonsai.PulsePal"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:PublishSubject">
                <Name>LowResCamera</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DeviceId" DisplayName="LowResCam" />
              <Property Name="ConfigFile" DisplayName="LowResConfig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:uEyeCapture">
                <p1:DeviceId>2</p1:DeviceId>
                <p1:ConfigFile>C:\Users\ALBINO\Desktop\LowResCamParams.ini</p1:ConfigFile>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LowResCamera</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DeviceId" DisplayName="HighResCam" />
              <Property Name="ConfigFile" DisplayName="HighResConfig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:uEyeCapture">
                <p1:DeviceId>1</p1:DeviceId>
                <p1:ConfigFile>C:\Users\ALBINO\Desktop\HighResCamParams.ini</p1:ConfigFile>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>HighResCamera</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DisplayDevice" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>800</gl:Width>
                <gl:Height>800</gl:Height>
                <gl:VSync>Off</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Fixed</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency>85</gl:TargetUpdateFrequency>
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>house</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\resources\house.jpg</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>1d-01</gl:Name>
                    <gl:Width>1024</gl:Width>
                    <gl:Height>1024</gl:Height>
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\resources\1d-01.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>10d-01</gl:Name>
                    <gl:Width>1024</gl:Width>
                    <gl:Height>1024</gl:Height>
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\resources\10d-01.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Height</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ScreenHeight</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Width</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ScreenWidth</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-1</Left>
              <Right>1</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Photodiode</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>ComPortPhoto</io:Name>
                <io:PortName>COM4</io:PortName>
                <io:BaudRate>115200</io:BaudRate>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>false</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.001S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>REQ</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>ComPortPhoto</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>ComPortPhoto</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="StringProperty">
                      <Value>E</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i</Pattern>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PhotoValue</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Transformation Matrixes</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="PX2MM" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>C:\Users\ALBINO\Desktop\VRConversions\PX2MM.txt</io:FileName>
              <io:ListSeparator />
              <io:ScanPattern>%f,%f,%f</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ForEachLine</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="4" Label="Source2" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>PX2MM</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="MM2VL" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>C:\Users\ALBINO\Desktop\VRConversions\MM2VL.txt</io:FileName>
              <io:ListSeparator />
              <io:ScanPattern>%f,%f,%f</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ForEachLine</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="4" Label="Source2" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>MM2VL</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="MM2VR" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>C:\Users\ALBINO\Desktop\VRConversions\MM2VR.txt</io:FileName>
              <io:ListSeparator />
              <io:ScanPattern>%f,%f,%f</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ForEachLine</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="4" Label="Source2" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>MM2VR</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT18M30S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="RootPath" />
              <Property Name="Date" />
              <Property Name="ProtocolName" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TrialParameters</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="RootPath" />
                    <Property Name="Date" />
                    <Property Name="ProtocolName" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LogPaths</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="RootPath" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>C:\Users\ALBINO\Desktop</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>\</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}{1}</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>RootPath</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Date" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>test</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RootPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>\</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="ProtocolName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Darkness</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}{1}{2}{3}</Format>
                          <Selector>Item1,Item2,Item3,Item4</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>SessionPath</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="13" Label="Source2" />
                        <Edge From="9" To="13" Label="Source1" />
                        <Edge From="10" To="13" Label="Source3" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source4" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Tracking</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LowResCamera</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:ConvertColor">
                      <cv:Conversion>Gray2Bgra</cv:Conversion>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ExtractBinaryRegion</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:Grayscale" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:BackgroundSubtraction">
                            <cv:BackgroundFrames>100</cv:BackgroundFrames>
                            <cv:AdaptationRate>0</cv:AdaptationRate>
                            <cv:ThresholdValue>40</cv:ThresholdValue>
                            <cv:ThresholdType>Binary</cv:ThresholdType>
                            <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:FindContours">
                            <cv:Mode>External</cv:Mode>
                            <cv:Method>ChainApproxNone</cv:Method>
                            <cv:Offset>
                              <cv:X>0</cv:X>
                              <cv:Y>0</cv:Y>
                            </cv:Offset>
                            <cv:MinArea>10</cv:MinArea>
                            <cv:MaxArea>100</cv:MaxArea>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:BinaryRegionAnalysis" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:LargestBinaryRegion" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:BinaryRegionExtremes">
                      <cv:Method>MajorAxis</cv:Method>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Centroid</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>FindHead</ipy:Name>
                    <ipy:Script>import math
import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Point2f
from System import Single, Tuple

# Global Variables
centroid = Point2f(float(0),float(0))
head = Point2f(float(0),float(0))
tail = Point2f(float(0),float(0))
history = float(0)


def distancesquare(pt1,pt2):
  dx = (pt2.X - pt1.X)
  dy = (pt2.Y - pt1.Y)
  return dx * dx + dy * dy

def angleline(pt1,pt2):
  dx = (pt2.X - pt1.X)
  dy = (pt2.Y - pt1.Y)
  return math.atan2(dy, dx)

def cossimilarity(pt1,pt2):
  if (dotproduct(pt1,pt1)*dotproduct(pt2,pt2)) == 0:
    return float(1)
  else:
    return float(dotproduct(pt1,pt2)/(math.sqrt(dotproduct(pt1,pt1))*math.sqrt(dotproduct(pt2,pt2))))

def dotproduct(pt1,pt2):
  return pt1.X*pt2.X+pt1.Y*pt2.Y

@returns(Point2f)
def process(value):
    #Load Global Variables
    global centroid, head, tail, history
    
    pt1 = value.Item1
    pt2 = value.Item2
    pt3 = value.Item3
    d = distancesquare(centroid,pt1)

    if distancesquare(pt3, head) &lt; distancesquare(pt3, tail):
      aux = pt2
      pt2 = pt3
      pt3 = aux
    
    dCentroid = pt1 - centroid
    dHead = head - centroid
    if distancesquare(centroid,pt1) &gt; 1:
      cossim = cossimilarity(dCentroid,dHead)
      history = history + 0.2*cossim
    else:
      history = 1

    if history &lt; 0:
      aux = pt2
      pt2 = pt3
      pt3 = aux

    centroid = pt1
    head = pt2
    tail = pt3

    return head</ipy:Script>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ConvertToMm</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PX2MM</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:UnitTransform" />
                        </Expression>
                        <Expression xsi:type="ipy:PythonTransform">
                          <ipy:Name>ConvertToPoint2f</ipy:Name>
                          <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Point2f

@returns(Point2f)
def process(value):
  return Point2f(value.Item1,value.Item2)</ipy:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="5" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ConvertToMm</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PX2MM</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:UnitTransform" />
                        </Expression>
                        <Expression xsi:type="ipy:PythonTransform">
                          <ipy:Name>ConvertToPoint2f</ipy:Name>
                          <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Point2f

@returns(Point2f)
def process(value):
  return Point2f(value.Item1,value.Item2)</ipy:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="5" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>CalculateOrientation</ipy:Name>
                    <ipy:Script>import math
import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Point2f
from System import Single, Tuple

def angleline(pt1,pt2):
  dx = (pt2.X - pt1.X)
  dy = (pt2.Y - pt1.Y)
  return math.atan2(dy, dx)

@returns(float)
def process(value):
    centroid = value.Item1
    head = value.Item2
    orientation = angleline(centroid,head)
    return float(orientation)</ipy:Script>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename Var</scr:Name>
                    <scr:Expression>New(
it as Orientation)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Orientation</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:HeadVisualizer" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HighResCamera</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>9923</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Divide">
                    <Operand xsi:type="IntProperty">
                      <Value>85</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename Var</scr:Name>
                    <scr:Expression>New(
it as ElapsedTimeSec)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ElapsedTimeSec</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename Var</scr:Name>
                    <scr:Expression>New(
it.Value.Item1.Item1.Item2 as LowResFrame,
it.Value.Item1.Item2 as HighResFrame,
it.Value.Item2 as Centroid,
it.Value.Item3 as Head,
it.Value.Item4 as Orientation,
it.Timestamp as TimeTracking,
it.Value.Item5 as TimeLowRes)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Fly</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="32" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="21" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="5" To="27" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="26" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="12" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="13" Label="Source2" />
                  <Edge From="11" To="13" Label="Source3" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="16" Label="Source1" />
                  <Edge From="12" To="21" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="14" To="21" Label="Source3" />
                  <Edge From="15" To="33" Label="Source3" />
                  <Edge From="15" To="17" Label="Source2" />
                  <Edge From="16" To="33" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="33" Label="Source4" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="33" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="32" To="33" Label="Source5" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Pulsepal</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Fly</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Centroid</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ConvertToProjectionUnits</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>MM2VL</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>ToFloat</scr:Name>
                          <scr:Expression>Single(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>ToFloat</scr:Name>
                          <scr:Expression>Single(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:UnitTransform" />
                        </Expression>
                        <Expression xsi:type="ipy:PythonTransform">
                          <ipy:Name>ConvertToPoint2f</ipy:Name>
                          <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Point2f

@returns(Point2f)
def process(value):
  return Point2f(value.Item1,value.Item2+0.1)</ipy:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="7" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="pal:SetFixedVoltage">
                      <pal:PortName>COM6</pal:PortName>
                      <pal:Channels>2</pal:Channels>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Y</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="pal:SetFixedVoltage">
                      <pal:PortName>COM6</pal:PortName>
                      <pal:Channels>1</pal:Channels>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Stimuli</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Fly</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Centroid.X</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Centroid.Y</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Orientation</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.LowResFrame</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename Var</scr:Name>
                    <scr:Expression>New(
it.Item1 as Draw,
it.Item3 as LowResFrame,
it.Item2.Item1 as X,
it.Item2.Item2 as Y,
it.Item2.Item3 as Ori,
it.Item4 as TimeDraw)
</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Stim</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="11" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="4" To="8" Label="Source1" />
                  <Edge From="4" To="10" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="9" Label="Source2" />
                  <Edge From="7" To="12" Label="Source1" />
                  <Edge From="8" To="9" Label="Source3" />
                  <Edge From="9" To="12" Label="Source2" />
                  <Edge From="10" To="12" Label="Source3" />
                  <Edge From="11" To="12" Label="Source4" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ShowTexture" />
              <Property Name="TextureName" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Projection</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Stim</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Draw</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>20</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>PhotodiodeFlash</ipy:Name>
                    <ipy:Script># Global Variables (Outputs)
PhotoSwitch = None                #Transparency Switch (1 - not transparent; 0  transparent
PhotoCounter = None               #Number of Projections frames to ignore before switch activation

@returns(float)
def process(value):
    #Load Global Variables
    global PhotoSwitch, PhotoCounter, Trial

    if PhotoCounter is None:
      PhotoCounter = value
      PhotoSwitch = 0
      
    if PhotoCounter == 0:
      PhotoCounter = value
      if PhotoSwitch == 0:
        PhotoSwitch = 1
      else:
        PhotoSwitch = 0

    PhotoCounter-=1
    return PhotoSwitch</ipy:Script>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorA" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <LocationX>1</LocationX>
                    <LocationY>-1</LocationY>
                    <Layer>1</Layer>
                    <Diameter>1</Diameter>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>0</ColorA>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PhotoValue</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="ShowTexture" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Name>ExtentCalculation</ipy:Name>
                    <ipy:Script>@returns(int)
def process(value):
    #Load Global Variables

    if value is True:
      var = 2 * 1.5340
    else:
      var = 0
   
    return var</ipy:Script>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ExtentX" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ExtentY" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Ori</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ConvertToProjectionUnits</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>MM2VR</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>ToFloat</scr:Name>
                          <scr:Expression>Single(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>ToFloat</scr:Name>
                          <scr:Expression>Single(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:UnitTransform" />
                        </Expression>
                        <Expression xsi:type="ipy:PythonTransform">
                          <ipy:Name>ConvertToPoint2f</ipy:Name>
                          <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import Point2f

@returns(Point2f)
def process(value):
  return Point2f(value.Item1,value.Item2)</ipy:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="7" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0.158123866</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Y</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0.0378268734</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationY" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="TextureName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>-0.7555679</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Angle" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
                    <Angle>-43.29085</Angle>
                    <TextureName>1d-01</TextureName>
                    <ExtentX>3</ExtentX>
                    <ExtentY>3</ExtentY>
                    <LocationX>0.158123866</LocationX>
                    <LocationY>0.0378268734</LocationY>
                    <Layer>-1</Layer>
                    <ScaleX>1</ScaleX>
                    <ScaleY>1</ScaleY>
                    <ShiftX>0</ShiftX>
                    <ShiftY>0</ShiftY>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename Var</scr:Name>
                    <scr:Expression>New(
it.Item1.Value.Item1.LowResFrame as LowResFrame,
it.Item1.Value.Item1.X as X,
it.Item1.Value.Item1.Y as Y,
it.Item1.Value.Item1.Ori as Orientation,
it.Item1.Value.Item3 as PhotoState,
it.Item2 as PhotoValue,
it.Item1.Timestamp as TimeProjection,
it.Item1.Value.Item1.TimeDraw as TimeDraw)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Projection</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>MM2VR</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="ipy:PythonTransform">
                      <ipy:Name>ConvertToPoint2f</ipy:Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="26" Label="Source1" />
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="0" To="12" Label="Source1" />
                  <Edge From="0" To="13" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="1" To="25" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="26" Label="Source4" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="26" Label="Source3" />
                  <Edge From="6" To="28" Label="Source2" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="25" Label="Source5" />
                  <Edge From="11" To="25" Label="Source6" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="13" To="18" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="25" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="25" Label="Source3" />
                  <Edge From="22" To="25" Label="Source7" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source4" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="31" To="33" Label="Source1" />
                  <Edge From="32" To="33" Label="Source2" />
                  <Edge From="33" To="35" Label="Source1" />
                  <Edge From="34" To="35" Label="Source2" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="37" To="39" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Logging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LogFly</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>_Fly_.csv</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}{1}</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Fly</Name>
                        </Expression>
                        <Expression xsi:type="io:CsvWriter">
                          <io:FileName>C:\Users\ALBINO\Desktop\test\Darkness_Fly_.csv</io:FileName>
                          <io:Append>false</io:Append>
                          <io:Overwrite>false</io:Overwrite>
                          <io:Suffix>FileCount</io:Suffix>
                          <io:IncludeHeader>true</io:IncludeHeader>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LogStim</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>_Stim_.csv</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}{1}</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Projection</Name>
                        </Expression>
                        <Expression xsi:type="io:CsvWriter">
                          <io:FileName>C:\Users\ALBINO\Desktop\test\Darkness_Stim_.csv</io:FileName>
                          <io:Append>false</io:Append>
                          <io:Overwrite>false</io:Overwrite>
                          <io:Suffix>FileCount</io:Suffix>
                          <io:IncludeHeader>true</io:IncludeHeader>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LogVideo</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LowResCamera</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>_CamL_.avi</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}{1}</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:VideoWriter">
                            <cv:FileName>C:\Users\ALBINO\Desktop\test\Darkness_CamL_.avi</cv:FileName>
                            <cv:Suffix>FileCount</cv:Suffix>
                            <cv:Buffered>true</cv:Buffered>
                            <cv:Overwrite>false</cv:Overwrite>
                            <cv:FourCC>FMP4</cv:FourCC>
                            <cv:FrameRate>60</cv:FrameRate>
                            <cv:FrameSize>
                              <cv:Width>0</cv:Width>
                              <cv:Height>0</cv:Height>
                            </cv:FrameSize>
                            <cv:ResizeInterpolation>Linear</cv:ResizeInterpolation>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>_CamH_.avi</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}{1}</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HighResCamera</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:VideoWriter">
                            <cv:FileName>C:\Users\ALBINO\Desktop\test\Darkness_CamH_.avi</cv:FileName>
                            <cv:Suffix>FileCount</cv:Suffix>
                            <cv:Buffered>true</cv:Buffered>
                            <cv:Overwrite>false</cv:Overwrite>
                            <cv:FourCC>FMP4</cv:FourCC>
                            <cv:FrameRate>120</cv:FrameRate>
                            <cv:FrameSize>
                              <cv:Width>0</cv:Width>
                              <cv:Height>0</cv:Height>
                            </cv:FrameSize>
                            <cv:ResizeInterpolation>Linear</cv:ResizeInterpolation>
                          </Combinator>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="6" Label="Source1" />
                        <Edge From="1" To="3" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source3" />
                        <Edge From="7" To="9" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="13" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>